WorkflowBuilder(Version=2.8.1)
GroupWorkflow Prints
    GroupWorkflow Init
        StringProperty
        -> IgnoreElements
        -> BehaviorSubject Prints

        IntProperty(Value=0)
        -> IgnoreElements
        -> BehaviorSubject PrintNumber

    GroupWorkflow Prints
        GroupWorkflow ITI
            StringProperty(Value="======================================") => #0
            ExternalizedMapping(PrintNumber) => #1
            #0, #1 -> GroupWorkflow Print
                SubscribeSubject PrintNumber => #0
                ExternalizedMapping(PrintNumber) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintNumber)) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=0))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Prints
                -> WorkflowOutput

        GroupWorkflow ITIDuration
            SubscribeSubject ITIEnd => #0
            SubscribeSubject ITIStart => #1
            #0, #1 -> CombineLatest
            -> Subtract
            -> GroupWorkflow QuantityString => #4
                ExternalizedMapping(Value(DisplayName=QuantityName))
                -> StringProperty(Value="ITI duration") => #1
                WorkflowInput Source1 => #2
                ExternalizedMapping(Value(DisplayName=Unit))
                -> StringProperty(Value=s) => #4
                #1, #2, #4 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + ": " + Item2.ToString() + " " + Item3
                -> WorkflowOutput
            ExternalizedMapping(PrintNumber) => #5
            #4, #5 -> GroupWorkflow Print
                SubscribeSubject PrintNumber => #0
                ExternalizedMapping(PrintNumber) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintNumber)) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Prints
                -> WorkflowOutput

        GroupWorkflow ABL
            SubscribeSubject ABL
            -> GroupWorkflow QuantityString => #1
                ExternalizedMapping(Value(DisplayName=QuantityName))
                -> StringProperty(Value=ABL) => #1
                WorkflowInput Source1 => #2
                ExternalizedMapping(Value(DisplayName=Unit))
                -> StringProperty(Value=dB) => #4
                #1, #2, #4 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + ": " + Item2.ToString() + " " + Item3
                -> WorkflowOutput
            ExternalizedMapping(PrintNumber) => #2
            #1, #2 -> GroupWorkflow Print
                SubscribeSubject PrintNumber => #0
                ExternalizedMapping(PrintNumber) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintNumber)) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=2))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Prints
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow ILD
            SubscribeSubject ILD
            -> GroupWorkflow QuantityString => #1
                ExternalizedMapping(Value(DisplayName=QuantityName))
                -> StringProperty(Value=ILD) => #1
                WorkflowInput Source1 => #2
                ExternalizedMapping(Value(DisplayName=Unit))
                -> StringProperty(Value=dB) => #4
                #1, #2, #4 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + ": " + Item2.ToString() + " " + Item3
                -> WorkflowOutput
            ExternalizedMapping(PrintNumber) => #2
            #1, #2 -> GroupWorkflow Print
                SubscribeSubject PrintNumber => #0
                ExternalizedMapping(PrintNumber) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintNumber)) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=3))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Prints
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow CorrectSide
            StringProperty(Value="Trial's correct answer: ") => #0
            SubscribeSubject LeftOrRight => #1
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -1
            -> StringProperty(Value=Left) => #3
            #1 -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == 1
            -> StringProperty(Value=Right) => #5
            #3, #5 -> Merge => #6
            #0, #6 -> CombineLatest
            -> Add => #8
            ExternalizedMapping(PrintNumber) => #9
            #8, #9 -> GroupWorkflow Print
                SubscribeSubject PrintNumber => #0
                ExternalizedMapping(PrintNumber) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintNumber)) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=4))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Prints
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow StartTrial
            StringProperty(Value="The animal can now poke") => #0
            ExternalizedMapping(PrintNumber) => #1
            #0, #1 -> GroupWorkflow Print
                SubscribeSubject PrintNumber => #0
                ExternalizedMapping(PrintNumber) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintNumber)) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=5))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Prints
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow Fixation
            StringProperty(Value="The animal is fixed") => #0
            ExternalizedMapping(PrintNumber) => #1
            #0, #1 -> GroupWorkflow Print
                SubscribeSubject PrintNumber => #0
                ExternalizedMapping(PrintNumber) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintNumber)) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=6))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Prints
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow FT
            SubscribeSubject TimedSoundOnset
            -> GroupWorkflow QuantityString => #1
                ExternalizedMapping(Value(DisplayName=QuantityName))
                -> StringProperty(Value="Fixation time") => #1
                WorkflowInput Source1 => #2
                ExternalizedMapping(Value(DisplayName=Unit))
                -> StringProperty(Value=s) => #4
                #1, #2, #4 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + ": " + Item2.ToString() + " " + Item3
                -> WorkflowOutput
            ExternalizedMapping(PrintNumber) => #2
            #1, #2 -> GroupWorkflow Print
                SubscribeSubject PrintNumber => #0
                ExternalizedMapping(PrintNumber) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintNumber)) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=7))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Prints
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow StimulusPresentation
            StringProperty(Value="Sound playing") => #0
            ExternalizedMapping(PrintNumber) => #1
            #0, #1 -> GroupWorkflow Print
                SubscribeSubject PrintNumber => #0
                ExternalizedMapping(PrintNumber) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintNumber)) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=8))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Prints
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow MT
            StringProperty(Value="The animal can now make a decision") => #0
            ExternalizedMapping(PrintNumber) => #1
            #0, #1 -> GroupWorkflow Print
                SubscribeSubject PrintNumber => #0
                ExternalizedMapping(PrintNumber) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintNumber)) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=9))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Prints
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow Outcome
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == 2
            -> StringProperty(Value="Right answer") => #2
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == 1
            -> StringProperty(Value="Wrong answer") => #5
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -1
            -> StringProperty(Value="CNP Abort") => #8
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -2
            -> StringProperty(Value="Fixation Abort") => #11
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -3
            -> StringProperty(Value="RT Abort") => #14
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -4
            -> StringProperty(Value="MT+ Abort") => #17
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -5
            -> StringProperty(Value="MT- Abort") => #20
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -6
            -> StringProperty(Value="LNP Abort") => #23
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -7
            -> StringProperty(Value="IO crash") => #26
            #2, #5, #8, #11, #14, #17, #20, #23, #26 -> Merge => #27
            ExternalizedMapping(PrintNumber) => #28
            #27, #28 -> GroupWorkflow Print
                SubscribeSubject PrintNumber => #0
                ExternalizedMapping(PrintNumber) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintNumber)) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=10))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Prints
                -> WorkflowOutput

        GroupWorkflow PenaltyTime
            SubscribeSubject Penalty
            -> GroupWorkflow QuantityString => #1
                ExternalizedMapping(Value(DisplayName=QuantityName))
                -> StringProperty(Value="Penalty time") => #1
                WorkflowInput Source1 => #2
                ExternalizedMapping(Value(DisplayName=Unit))
                -> StringProperty(Value=s) => #4
                #1, #2, #4 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + ": " + Item2.ToString() + " " + Item3
                -> WorkflowOutput
            ExternalizedMapping(PrintNumber) => #2
            #1, #2 -> GroupWorkflow Print
                SubscribeSubject PrintNumber => #0
                ExternalizedMapping(PrintNumber) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintNumber)) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=11))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Prints
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow LeftReward
            StringProperty(Value="Left reward given") => #0
            ExternalizedMapping(PrintNumber) => #1
            #0, #1 -> GroupWorkflow Print
                SubscribeSubject PrintNumber => #0
                ExternalizedMapping(PrintNumber) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintNumber)) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=12))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Prints
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow RightReward
            StringProperty(Value="Right reward given") => #0
            ExternalizedMapping(PrintNumber) => #1
            #0, #1 -> GroupWorkflow Print
                SubscribeSubject PrintNumber => #0
                ExternalizedMapping(PrintNumber) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintNumber)) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=13))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Prints
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow IntendedFT
            SubscribeSubject IntendedOptoOnset => #0
            SubscribeSubject IntendedSoundOnset => #1
            #0, #1 -> CombineLatest
            -> Add
            -> GroupWorkflow QuantityString => #4
                ExternalizedMapping(Value(DisplayName=QuantityName))
                -> StringProperty(Value="Intended FT") => #1
                WorkflowInput Source1 => #2
                ExternalizedMapping(Value(DisplayName=Unit))
                -> StringProperty(Value=ms) => #4
                #1, #2, #4 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + ": " + Item2.ToString() + " " + Item3
                -> WorkflowOutput
            ExternalizedMapping(PrintNumber) => #5
            #4, #5 -> GroupWorkflow Print
                SubscribeSubject PrintNumber => #0
                ExternalizedMapping(PrintNumber) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintNumber)) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=14))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Prints
                -> WorkflowOutput
            -> WorkflowOutput

    SubscribeSubject Prints
    -> WorkflowOutput

GroupWorkflow Utils
    GroupWorkflow GenerateILDArray
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=Sound.Ild)
        -> InputMapping(Selector=it, NumSteps(Selector=NumSteps), StepSize(Selector=StepSize), UseLog(Selector=UseLog), LogBase(Selector=LogBase))
        -> Extensions.GenerateILDArray(NumSteps=1, StepSize=50, UseLog=false, LogBase=2)
        -> MulticastSubject ILDs

    GroupWorkflow ShuffleILDArray
        SubscribeSubject NewILDShuffle => #0
        SubscribeSubject ILDs => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Extensions.ShuffleArray
        -> MulticastSubject ShuffledILDs

    GroupWorkflow PrepareNewTrial
        BooleanProperty(Value=true)
        -> BehaviorSubject PrepareNewTrial

        BooleanProperty(Value=false)
        -> IgnoreElements
        -> BehaviorSubject RequestNewTrial

        SubscribeSubject RequestNewTrial => #5
        -> Condition "TrialsCompleted == TrialsPerBlock"
            SubscribeSubject TrialsCompleted => #0
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=TrialsPerBlock) => #2
            #0, #2 -> CombineLatest
            -> GreaterThanOrEqual => #4
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=CriticalPerformance.UsePerformance)
            -> Equal(Operand=BooleanProperty(Value=false)) => #7
            SubscribeSubject BlockPerformance => #8
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=CriticalPerformance.Value) => #10
            #8, #10 -> CombineLatest
            -> GreaterThanOrEqual => #12
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=CriticalPerformance.UsePerformance) => #14
            #12, #14 -> CombineLatest
            -> LogicalAnd => #16
            #7, #16 -> CombineLatest
            -> LogicalOr => #18
            #4, #18 -> CombineLatest
            -> LogicalAnd
            -> WorkflowOutput
        -> GroupWorkflow StartNewBlock(Description="Resets every block subject (variable) and updates the training level if needed")
            WorkflowInput Source1 => #0
            SubscribeSubject Block => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Add(Operand=IntProperty(Value=1))
            -> MulticastSubject Block => #5
            -> Condition UpdateTrainingLevelCondition(Description="!UsePerformance || (UsePerformance && (BlockPerformance >= CriticalPerformance) && (TrainingLevel < NumLevels))") => #6
                SubscribeSubject TrainingLevel => #0
                SubscribeSubject TrainingConfig
                -> MemberSelector(Selector=Levels.Count)
                -> Subtract(Operand=IntProperty(Value=1)) => #3
                #0, #3 -> WithLatestFrom
                -> LessThan
                -> WorkflowOutput
            SubscribeSubject TrainingLevel => #7
            #6, #7 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Add(Operand=IntProperty(Value=1))
            -> MulticastSubject TrainingLevel => #11
            #5 -> Condition !UpdateTrainingLevelCondition(Description="!(!UsePerformance || (UsePerformance && (BlockPerformance >= CriticalPerformance) && (TrainingLevel < NumLevels)))") => #12
                SubscribeSubject TrainingLevel => #0
                SubscribeSubject TrainingConfig
                -> MemberSelector(Selector=Levels.Count)
                -> Subtract(Operand=IntProperty(Value=1)) => #3
                #0, #3 -> WithLatestFrom
                -> GreaterThanOrEqual
                -> WorkflowOutput
            #11, #12 -> Merge
            -> IntProperty(Value=0)
            -> MulticastSubject BlockTrial
            -> MulticastSubject BlockMessage
            -> DoubleProperty(Value=0)
            -> MulticastSubject TrialsCompleted
            -> MulticastSubject RightAnswers
            -> MulticastSubject BlockPerformance
            -> MulticastSubject TrialsAborted
            -> MulticastSubject BlockAbortRatio
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #8
        #5 -> Condition "TrialsCompleted != TrialsPerBlock" => #9
            SubscribeSubject TrialsCompleted => #0
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=TrialsPerBlock) => #2
            #0, #2 -> CombineLatest
            -> GreaterThanOrEqual => #4
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=CriticalPerformance.UsePerformance)
            -> Equal(Operand=BooleanProperty(Value=false)) => #7
            SubscribeSubject BlockPerformance => #8
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=CriticalPerformance.Value) => #10
            #8, #10 -> CombineLatest
            -> GreaterThanOrEqual => #12
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=CriticalPerformance.UsePerformance) => #14
            #12, #14 -> CombineLatest
            -> LogicalAnd => #16
            #7, #16 -> CombineLatest
            -> LogicalOr => #18
            #4, #18 -> CombineLatest
            -> LogicalAnd
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        #8, #9 -> Merge
        -> GroupWorkflow UpdateTrialNumbers(Description="Updates the total trial number and the block trial number")
            WorkflowInput Source1
            -> BehaviorSubject UTN

            SubscribeSubject UTN => #2
            SubscribeSubject Trial => #3
            #2, #3 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Add(Operand=IntProperty(Value=1))
            -> MulticastSubject Trial => #7
            SubscribeSubject UTN => #8
            SubscribeSubject BlockTrial => #9
            #8, #9 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Add(Operand=IntProperty(Value=1))
            -> MulticastSubject BlockTrial => #13
            #7, #13 -> Zip
            -> WorkflowOutput
        -> GroupWorkflow RandomizeLouderSpeaker
            WorkflowInput Source1
            -> BehaviorSubject RLS

            SubscribeSubject RLS
            -> SelectMany PickSoundIndex
                WorkflowInput Source1 => #0
                SubscribeSubject SetupConfig
                -> MemberSelector(Selector=Sounds) => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                SubscribeSubject SoundChoiceDistribution
                -> Bonsai.Numerics.Distributions.Sample
                -> PropertyMapping(Value) => #7
                #4, #7 -> Index(Operand=IntProperty(Value=0))
                -> MemberSelector(Selector=Index)
                -> MulticastSubject SoundIndex
                -> Take(Count=1)
                -> WorkflowOutput

            SubscribeSubject RLS
            -> GroupWorkflow RemainingLevels
                WorkflowInput Source1 => #0
                -> GroupWorkflow ABL => #1
                    WorkflowInput Source1 => #0
                    -> Condition !UseLevelABL
                        SubscribeSubject LevelConfig
                        -> MemberSelector(Selector=Sound.Abl.UseLevelAbl)
                        -> Equal(Operand=BooleanProperty(Value=false))
                        -> WorkflowOutput
                    -> GroupWorkflow RandomABL => #2
                        WorkflowInput Source1
                        -> GroupWorkflow PickRandomIndex
                            WorkflowInput Source1
                            -> GroupWorkflow NewABLRequest => #1
                                WorkflowInput Source1 => #0
                                SubscribeSubject LevelConfig
                                -> MemberSelector(Selector=Sound.Abl.ChangeEveryTrial) => #2
                                SubscribeSubject BlockTrial => #3
                                #2, #3 -> CombineLatest => #4
                                #0, #4 -> WithLatestFrom
                                -> MemberSelector(Selector=Item2)
                                -> Bonsai.Scripting.Expressions.ExpressionCondition "ChangeEveryTrial || BlockTrial == 1"
                                  Expression: Item1 || Item2 == 1
                                -> MemberSelector(Selector=Item1)
                                -> WorkflowOutput
                            SubscribeSubject Random => #2
                            SubscribeSubject AnimalConfig
                            -> MemberSelector(Selector=Sound.AblList.Count)
                            -> Subtract(Operand=IntProperty(Value=1))
                            -> PropertyMapping(Upper) => #6
                            #2, #6 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=2) => #7
                            #1, #7 -> WithLatestFrom
                            -> MemberSelector(Selector=Item2)
                            -> Bonsai.Numerics.Distributions.Sample
                            -> WorkflowOutput
                        -> InputMapping(Selector=it, Index(Selector=it))
                        -> SelectMany ABLValue
                            SubscribeSubject AnimalConfig
                            -> MemberSelector(Selector=Sound.AblList) => #1
                            ExternalizedMapping(Value(DisplayName=Index)) => #2
                            #1, #2 -> Index(Operand=IntProperty(Value=1))
                            -> Take(Count=1)
                            -> WorkflowOutput
                        -> WorkflowOutput
                    #0 -> Condition UseLevelABL => #3
                        SubscribeSubject LevelConfig
                        -> MemberSelector(Selector=Sound.Abl.UseLevelAbl)
                        -> WorkflowOutput
                    SubscribeSubject LevelConfig
                    -> MemberSelector(Selector=Sound.Abl.LevelAbl) => #5
                    #3, #5 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #7
                    #2, #7 -> Merge
                    -> MulticastSubject ABL
                    -> SelectMany PrintRequest
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value(DisplayName=PrintNumber))
                        -> IntProperty(Value=2)
                        -> MulticastSubject PrintNumber => #3
                        #0, #3 -> Zip
                        -> MemberSelector(Selector=Item1)
                        -> Take(Count=1)
                        -> WorkflowOutput
                    -> WorkflowOutput
                #0 -> GroupWorkflow ILD => #2
                    WorkflowInput Source1 => #0
                    -> Condition "CycleILD == 0"
                        SubscribeSubject AnimalConfig
                        -> MemberSelector(Selector=Sound.CycleIld)
                        -> Equal(Operand=BooleanProperty(Value=false))
                        -> WorkflowOutput
                    -> GroupWorkflow PickRandomIndex
                        WorkflowInput Source1 => #0
                        SubscribeSubject Random => #1
                        SubscribeSubject ILDs
                        -> MemberSelector(Selector=Length)
                        -> Subtract(Operand=IntProperty(Value=1))
                        -> PropertyMapping(Upper) => #5
                        #1, #5 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1) => #6
                        #0, #6 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> Bonsai.Numerics.Distributions.Sample
                        -> WorkflowOutput
                    -> InputMapping(Selector=it, Index(Selector=it))
                    -> SelectMany ILDValue => #4
                        SubscribeSubject ILDs => #0
                        ExternalizedMapping(Value(DisplayName=Index)) => #1
                        #0, #1 -> Index(Operand=IntProperty(Value=1))
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #0 -> Condition "CycleILD != 0" => #5
                        SubscribeSubject AnimalConfig
                        -> MemberSelector(Selector=Sound.CycleIld)
                        -> WorkflowOutput
                    SubscribeSubject ILDIndex => #6
                    #5, #6 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #8
                    -> GroupWorkflow UpdateILDIndex => #9
                        WorkflowInput Source1
                        -> Add(Operand=DoubleProperty(Value=1)) => #1
                        SubscribeSubject ShuffledILDs
                        -> MemberSelector(Selector=Length) => #3
                        #1, #3 -> WithLatestFrom => #4
                        -> Bonsai.Scripting.Expressions.ExpressionCondition "ILDIndex != NumILDs"
                          Expression: Item1 != Item2
                        -> MemberSelector(Selector=Item1) => #6
                        #4 -> Bonsai.Scripting.Expressions.ExpressionCondition "ILDIndex == NumILDs"
                          Expression: Item1 == Item2
                        -> DoubleProperty(Value=0)
                        -> MulticastSubject NewILDShuffle => #9
                        #6, #9 -> Merge
                        -> MulticastSubject ILDIndex
                        -> WorkflowOutput
                    #8, #9 -> Zip
                    -> InputMapping(Selector=Item1, Index(Selector=Item1))
                    -> SelectMany ShuffledILDValue => #12
                        SubscribeSubject ShuffledILDs => #0
                        ExternalizedMapping(Value(DisplayName=Index)) => #1
                        #0, #1 -> Index(Operand=IntProperty(Value=1))
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #4, #12 -> Merge
                    -> MulticastSubject ILD
                    -> SelectMany PrintRequest
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value(DisplayName=PrintNumber))
                        -> IntProperty(Value=3)
                        -> MulticastSubject PrintNumber => #3
                        #0, #3 -> Zip
                        -> MemberSelector(Selector=Item1)
                        -> Take(Count=1)
                        -> WorkflowOutput
                    -> Divide(Operand=DoubleProperty(Value=2))
                    -> WorkflowOutput
                #1, #2 -> Zip => #3
                -> Condition "RepeatTrial == 0" => #4
                    SubscribeSubject RepeatTrial
                    -> Equal(Operand=BooleanProperty(Value=false))
                    -> WorkflowOutput
                -> Subtract
                -> MulticastSubject LeftIntensity => #6
                #4 -> Add
                -> MulticastSubject RightIntensity => #8
                #6, #8 -> Zip
                -> BooleanProperty(Value=false) => #10
                #3 -> Condition "RepeatTrial != 0"
                    SubscribeSubject RepeatTrial
                    -> WorkflowOutput
                -> BooleanProperty(Value=false)
                -> MulticastSubject RepeatTrial => #13
                #10, #13 -> Merge
                -> WorkflowOutput
            -> IntProperty(Value=0)
            -> GroupWorkflow LeftOrRight
                WorkflowInput Source1 => #0
                SubscribeSubject RightIntensity => #1
                SubscribeSubject LeftIntensity => #2
                #1, #2 -> CombineLatest
                -> Subtract => #4
                -> Bonsai.Scripting.Expressions.ExpressionCondition "it >=0"
                  Expression: it >= 0
                -> IntProperty(Value=1) => #6
                #4 -> Bonsai.Scripting.Expressions.ExpressionCondition "it < 0"
                  Expression: it < 0
                -> IntProperty(Value=-1) => #8
                #6, #8 -> Merge => #9
                #0, #9 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject LeftOrRight
                -> SelectMany PrintRequest
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintNumber))
                    -> IntProperty(Value=4)
                    -> MulticastSubject PrintNumber => #3
                    #0, #3 -> Zip
                    -> MemberSelector(Selector=Item1)
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> WorkflowOutput
            -> WorkflowOutput

        SubscribeSubject RequestNewTrial => #13
        SubscribeSubject Random
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1) => #15
        #13, #15 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Numerics.Distributions.Sample => #18
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it > 0.3
        -> IntProperty(Value=0) => #20
        #18 -> Condition
            WorkflowInput Source1
            -> LessThanOrEqual(Operand=DoubleProperty(Value=0.3)) => #1
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=Optogenetics.UseOpto) => #3
            #1, #3 -> Zip
            -> LogicalAnd
            -> WorkflowOutput
        -> IntProperty(Value=1) => #22
        #20, #22 -> Merge
        -> MulticastSubject LEDTrial

        SubscribeSubject BaseSoundOnset => #25
        SubscribeSubject RequestNewTrial => #26
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=FixationTime.SoundExpMean)
        -> Bonsai.Dsp.Pow(Power=-1) => #29
        SubscribeSubject Random => #30
        #29, #30 -> WithLatestFrom
        -> InputMapping(Selector=Item2, TypeMapping=TypeMapping<System.Random>, Rate(Selector=Item1))
        -> Bonsai.Numerics.Distributions.CreateExponential(Rate=INF) => #33
        #26, #33 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #35
        -> Condition RandomizeFT
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=FixationTime.SoundExpMean)
            -> NotEqual(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        -> Bonsai.Numerics.Distributions.Sample => #37
        #35 -> Condition !RandomizeFT
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=FixationTime.SoundExpMean)
            -> Equal(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        -> DoubleProperty(Value=0) => #39
        #37, #39 -> Merge => #40
        #25, #40 -> CombineLatest
        -> Add
        -> MulticastSubject IntendedSoundOnset

        SubscribeSubject BaseOptoOnset => #44
        SubscribeSubject RequestNewTrial => #45
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=FixationTime.OptoExpMean)
        -> Bonsai.Dsp.Pow(Power=-1) => #48
        SubscribeSubject Random => #49
        #48, #49 -> WithLatestFrom
        -> InputMapping(Selector=Item2, TypeMapping=TypeMapping<System.Random>, Rate(Selector=Item1))
        -> Bonsai.Numerics.Distributions.CreateExponential(Rate=INF) => #52
        #45, #52 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #54
        -> Condition RandomizeFT
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=FixationTime.OptoExpMean)
            -> NotEqual(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        -> Bonsai.Numerics.Distributions.Sample => #56
        #54 -> Condition !RandomizeFT
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=FixationTime.OptoExpMean)
            -> Equal(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        -> DoubleProperty(Value=0) => #58
        #56, #58 -> Merge => #59
        #44, #59 -> CombineLatest
        -> Add
        -> MulticastSubject IntendedOptoOnset

    Disable GroupWorkflow SaveTrial
        DoubleProperty(Value=0)
        -> IgnoreElements
        -> BehaviorSubject SaveTrial

        SubscribeSubject SaveTrial
        -> SelectMany OutputFile
            SubscribeSubject Box => #0
            SubscribeSubject LEDPowerR => #1
            SubscribeSubject LEDPowerL => #2
            SubscribeSubject TimedLED => #3
            SubscribeSubject LEDTrial => #4
            SubscribeSubject BlockAbortRatio => #5
            SubscribeSubject BlockPerformance => #6
            SubscribeSubject RepeatTrial => #7
            SubscribeSubject Outcome => #8
            SubscribeSubject ResponsePoke => #9
            SubscribeSubject TimedLNP => #10
            SubscribeSubject IntendedLNP => #11
            SubscribeSubject TimedMT => #12
            SubscribeSubject MaxMT => #13
            SubscribeSubject TimedRT => #14
            SubscribeSubject MaxRT => #15
            SubscribeSubject BaseRT => #16
            SubscribeSubject TimedSoundOnset => #17
            SubscribeSubject TimedOptoOnset => #18
            #17, #18 -> Zip
            -> Add => #20
            SubscribeSubject TimedSoundOnset => #21
            SubscribeSubject IntendedSoundOnset => #22
            SubscribeSubject TrainingConfig
            -> MemberSelector(Selector=SoundExpMean) => #24
            SubscribeSubject BaseSoundOnset => #25
            SubscribeSubject TimedOptoOnset => #26
            SubscribeSubject IntendedOptoOnset => #27
            SubscribeSubject TrainingConfig
            -> MemberSelector(Selector=OptoExpMean) => #29
            SubscribeSubject BaseOptoOnset => #30
            SubscribeSubject TimeToCNP => #31
            SubscribeSubject MaxWait => #32
            SubscribeSubject ITIEnd => #33
            SubscribeSubject ITIStart => #34
            #33, #34 -> Zip
            -> Subtract => #36
            SubscribeSubject ITIEnd => #37
            SubscribeSubject ITIStart => #38
            SubscribeSubject IntendedITI => #39
            SubscribeSubject TrialEnd => #40
            SubscribeSubject TrialStart => #41
            #40, #41 -> Zip
            -> Subtract => #43
            SubscribeSubject TrialEnd => #44
            SubscribeSubject TrialStart => #45
            SubscribeSubject WaveformR => #46
            SubscribeSubject WaveformL => #47
            SubscribeSubject RightAmp => #48
            SubscribeSubject LeftAmp => #49
            SubscribeSubject Bias => #50
            SubscribeSubject ILD => #51
            SubscribeSubject ABL => #52
            SubscribeSubject TrainingLevel => #53
            SubscribeSubject TrainingConfig
            -> MemberSelector(Selector=TrialsPerBlock) => #55
            SubscribeSubject Block => #56
            SubscribeSubject Trial => #57
            SubscribeSubject SessionType => #58
            SubscribeSubject Session => #59
            SubscribeSubject Animal
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #61
              Expression: Convert.ToDouble(it)
            #59, #61 -> SubscribeWhen
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #63
              Expression: Convert.ToDouble(it)
            #58, #63 -> SubscribeWhen
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #65
              Expression: Convert.ToDouble(it)
            #57, #65 -> SubscribeWhen
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #67
              Expression: Convert.ToDouble(it)
            #56, #67 -> SubscribeWhen
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #69
              Expression: Convert.ToDouble(it)
            #55, #69 -> SubscribeWhen
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #71
              Expression: Convert.ToDouble(it)
            #53, #71 -> SubscribeWhen
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #73
              Expression: Convert.ToDouble(it)
            #52, #73 -> SubscribeWhen => #74
            #51, #74 -> SubscribeWhen => #75
            #50, #75 -> SubscribeWhen => #76
            #49, #76 -> SubscribeWhen => #77
            #48, #77 -> SubscribeWhen => #78
            #47, #78 -> SubscribeWhen
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #80
              Expression: Convert.ToDouble(it)
            #46, #80 -> SubscribeWhen
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #82
              Expression: Convert.ToDouble(it)
            #45, #82 -> SubscribeWhen => #83
            #44, #83 -> SubscribeWhen => #84
            #43, #84 -> SubscribeWhen => #85
            #39, #85 -> SubscribeWhen => #86
            #38, #86 -> SubscribeWhen => #87
            #37, #87 -> SubscribeWhen => #88
            #36, #88 -> SubscribeWhen => #89
            #32, #89 -> SubscribeWhen => #90
            #31, #90 -> SubscribeWhen => #91
            #30, #91 -> SubscribeWhen => #92
            #29, #92 -> SubscribeWhen => #93
            #27, #93 -> SubscribeWhen => #94
            #26, #94 -> SubscribeWhen => #95
            #25, #95 -> SubscribeWhen => #96
            #24, #96 -> SubscribeWhen => #97
            #22, #97 -> SubscribeWhen => #98
            #21, #98 -> SubscribeWhen => #99
            #20, #99 -> SubscribeWhen => #100
            #16, #100 -> SubscribeWhen => #101
            #15, #101 -> SubscribeWhen => #102
            #14, #102 -> SubscribeWhen => #103
            #13, #103 -> SubscribeWhen => #104
            #12, #104 -> SubscribeWhen => #105
            #11, #105 -> SubscribeWhen => #106
            #10, #106 -> SubscribeWhen => #107
            #9, #107 -> SubscribeWhen
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #109
              Expression: Convert.ToDouble(it)
            #8, #109 -> SubscribeWhen
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #111
              Expression: Convert.ToDouble(it)
            #7, #111 -> SubscribeWhen
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #113
              Expression: Convert.ToDouble(it)
            #6, #113 -> SubscribeWhen => #114
            #5, #114 -> SubscribeWhen => #115
            #4, #115 -> SubscribeWhen => #116
            #3, #116 -> SubscribeWhen => #117
            #2, #117 -> SubscribeWhen => #118
            #1, #118 -> SubscribeWhen => #119
            #0, #119 -> SubscribeWhen
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #121
              Expression: Convert.ToDouble(it)
            #121, #119, #118, #117, #116, #115, #114, #113, #111, #109, #107, #106, #105, #104, #103, #102, #101, #99, #98, #97, #96, #91, #90, #89, #88, #87, #86, #85, #84, #83, #82, #80, #78, #77, #76, #75, #74, #73, #71, #69, #67, #65, #63, #61, #92, #93, #94, #95, #100 -> Merge => #122
            #121 -> Delay(DueTime=PT0.001S) => #123
            #122, #123 -> TakeUntil
            -> ToArray
            -> MulticastSubject CSV
            -> BooleanProperty(Value=true)
            -> MulticastSubject PlotsMessage
            -> WorkflowOutput

    GroupWorkflow WaterDelivery
        SubscribeSubject WaterDelivery => #0
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
          Expression: it == -1
        -> Condition
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=SyringePumps.UsePumps)
            -> WorkflowOutput
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Enabled))
        -> MulticastSubject LeftPumpCommands
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableProtocolPayload(EnableProtocol=Enabled))
        -> MulticastSubject LeftPumpCommands
        -> SelectMany PrintRequest
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=PrintNumber))
            -> IntProperty(Value=12)
            -> MulticastSubject PrintNumber => #3
            #0, #3 -> Zip
            -> MemberSelector(Selector=Item1)
            -> Take(Count=1)
            -> WorkflowOutput
        -> Delay(DueTime=PT0.1S)
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Disabled))
        -> MulticastSubject LeftPumpCommands
        #1 -> Condition
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=SyringePumps.UsePumps)
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO1))
        -> MulticastSubject BehaviorCommands
        #0 -> Bonsai.Scripting.Expressions.ExpressionCondition => #14
          Expression: it == 1
        -> Condition
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=SyringePumps.UsePumps)
            -> WorkflowOutput
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Enabled))
        -> MulticastSubject RightPumpCommands
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableProtocolPayload(EnableProtocol=Enabled))
        -> MulticastSubject RightPumpCommands
        -> SelectMany PrintRequest
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=PrintNumber))
            -> IntProperty(Value=13)
            -> MulticastSubject PrintNumber => #3
            #0, #3 -> Zip
            -> MemberSelector(Selector=Item1)
            -> Take(Count=1)
            -> WorkflowOutput
        -> Delay(DueTime=PT0.1S)
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Disabled))
        -> MulticastSubject RightPumpCommands
        #14 -> Condition
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=SyringePumps.UsePumps)
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO2))
        -> MulticastSubject BehaviorCommands

    GroupWorkflow GetPenaltyTime
        SubscribeSubject Outcome => #0
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
          Expression: it == 2
        DoubleProperty(Value=0) => #2
        #1, #2 -> WithLatestFrom => #3
        #0 -> Bonsai.Scripting.Expressions.ExpressionCondition => #4
          Expression: it == 1
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=PenaltyTimes.Incorrect) => #6
        #4, #6 -> WithLatestFrom => #7
        #0 -> Bonsai.Scripting.Expressions.ExpressionCondition => #8
          Expression: it == -2
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=PenaltyTimes.FixationAbort) => #10
        #8, #10 -> WithLatestFrom => #11
        #0 -> Bonsai.Scripting.Expressions.ExpressionCondition => #12
          Expression: it < 0 && it != -2
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=PenaltyTimes.Abort) => #14
        #12, #14 -> WithLatestFrom => #15
        #3, #7, #11, #15 -> Merge
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject Penalty
        -> WorkflowOutput

    GroupWorkflow AutobiasCorrection
        BooleanProperty(Value=false)
        -> Take(Count=1)
        -> ToArray
        -> SelectMany "Remove First Element"
            WorkflowInput Source1
            -> Take(Count=1) => #1
            -> Concat => #2
            -> Condition "Not Last Element?" => #3
                WorkflowInput Source1
                -> ElementIndex
                -> MemberSelector(Selector=Index) => #2
                IntProperty(Value=0) => #3
                #2, #3 -> WithLatestFrom
                -> NotEqual
                -> WorkflowOutput
            #2 -> Last => #4
            #3, #4 -> TakeUntil
            -> ToArray => #6
            #1 -> Condition "Empty Array?" => #7
                WorkflowInput Source1
                -> MemberSelector(Selector=Length)
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            #6, #7 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> BehaviorSubject HitHistory

        BooleanProperty(Value=false)
        -> Take(Count=1)
        -> ToArray
        -> SelectMany "Remove First Element"
            WorkflowInput Source1
            -> Take(Count=1) => #1
            -> Concat => #2
            -> Condition "Not Last Element?" => #3
                WorkflowInput Source1
                -> ElementIndex
                -> MemberSelector(Selector=Index) => #2
                IntProperty(Value=0) => #3
                #2, #3 -> WithLatestFrom
                -> NotEqual
                -> WorkflowOutput
            #2 -> Last => #4
            #3, #4 -> TakeUntil
            -> ToArray => #6
            #1 -> Condition "Empty Array?" => #7
                WorkflowInput Source1
                -> MemberSelector(Selector=Length)
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            #6, #7 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> BehaviorSubject PreviousSides

        SubscribeSubject Outcome
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #11
          Expression: it > 0
        SubscribeSubject LeftOrRight => #12
        #11, #12 -> WithLatestFrom
        -> Condition => #14
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=AutobiasCorrection)
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it == 2
        -> SelectMany "Add Element" => #17
            SubscribeSubject HitHistory
            -> Take(Count=1)
            -> Concat => #2
            WorkflowInput Source1
            -> Take(Count=1) => #4
            #2, #4 -> Merge
            -> ToArray
            -> WorkflowOutput
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Length) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> GreaterThan(Operand=IntProperty(Value=25))
            -> WorkflowOutput
        -> SelectMany "Remove First Element" => #19
            SubscribeSubject HitHistory
            -> Take(Count=1) => #1
            -> Concat => #2
            -> Condition "Not Last Element?" => #3
                WorkflowInput Source1
                -> ElementIndex
                -> MemberSelector(Selector=Index) => #2
                SubscribeSubject HitHistory
                -> MemberSelector(Selector=Length)
                -> Subtract(Operand=IntProperty(Value=1))
                -> IntProperty(Value=0) => #6
                #2, #6 -> WithLatestFrom
                -> NotEqual
                -> WorkflowOutput
            #2 -> Last => #4
            #3, #4 -> TakeUntil
            -> ToArray => #6
            #1 -> Condition "Empty Array?" => #7
                WorkflowInput Source1
                -> MemberSelector(Selector=Length)
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            #6, #7 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #17 -> Condition => #20
            WorkflowInput Source1
            -> MemberSelector(Selector=Length) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> LessThanOrEqual(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        #19, #20 -> Merge
        -> MulticastSubject HitHistory => #22
        #14 -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it == -1
        -> SelectMany "Add Element" => #25
            SubscribeSubject PreviousSides
            -> Take(Count=1)
            -> Concat => #2
            WorkflowInput Source1
            -> Take(Count=1) => #4
            #2, #4 -> Merge
            -> ToArray
            -> WorkflowOutput
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Length) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> GreaterThan(Operand=IntProperty(Value=25))
            -> WorkflowOutput
        -> SelectMany "Remove First Element" => #27
            SubscribeSubject PreviousSides
            -> Take(Count=1) => #1
            -> Concat => #2
            -> Condition "Not Last Element?" => #3
                WorkflowInput Source1
                -> ElementIndex
                -> MemberSelector(Selector=Index) => #2
                SubscribeSubject PreviousSides
                -> MemberSelector(Selector=Length)
                -> Subtract(Operand=IntProperty(Value=1))
                -> IntProperty(Value=0) => #6
                #2, #6 -> WithLatestFrom
                -> NotEqual
                -> WorkflowOutput
            #2 -> Last => #4
            #3, #4 -> TakeUntil
            -> ToArray => #6
            #1 -> Condition "Empty Array?" => #7
                WorkflowInput Source1
                -> MemberSelector(Selector=Length)
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            #6, #7 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #25 -> Condition => #28
            WorkflowInput Source1
            -> MemberSelector(Selector=Length) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> LessThanOrEqual(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        #27, #28 -> Merge
        -> MulticastSubject PreviousSides => #30
        #22, #30 -> Zip
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> MemberSelector(Selector=Length)
            -> Equal(Operand=IntProperty(Value=25))
            -> WorkflowOutput
        -> Antibias(BiasThreshold=0.12) => #33
        -> MemberSelector(Selector=Item1)
        -> MulticastSubject LeftMultiplier
        #33 -> MemberSelector(Selector=Item2)
        -> MulticastSubject RightMultiplier

    Annotation "TODO: check if everything is updated before saving"(Text="")
    -> GroupWorkflow UpdateSubjects
        GroupWorkflow RepeatTrial
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == 2
            -> BooleanProperty(Value=false)
            -> MulticastSubject RepeatTrial

            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #5
              Expression: it == 1
            SubscribeSubject RepeatErrors => #6
            #5, #6 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject RepeatTrial

            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #11
              Expression: it < 0
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=TrialRepetition.RepeatAborts) => #13
            #11, #13 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject RepeatTrial

        GroupWorkflow TrialsAborted
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
              Expression: it < 0
            SubscribeSubject TrialsAborted => #2
            #1, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Add(Operand=DoubleProperty(Value=1))
            -> MulticastSubject TrialsAborted
            -> WorkflowOutput

        GroupWorkflow RightAnswers
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
              Expression: it == 2
            SubscribeSubject RightAnswers => #2
            #1, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Add(Operand=DoubleProperty(Value=1))
            -> MulticastSubject RightAnswers
            -> WorkflowOutput

        GroupWorkflow TrialsCompleted
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
              Expression: it > 0
            SubscribeSubject TrialsCompleted => #2
            #1, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Add(Operand=IntProperty(Value=1))
            -> MulticastSubject TrialsCompleted
            -> WorkflowOutput

        GroupWorkflow BlockAbortRatio
            SubscribeSubject TrialsAborted => #0
            SubscribeSubject BlockTrial => #1
            #0, #1 -> CombineLatest
            -> Divide
            -> MulticastSubject BlockAbortRatio
            -> WorkflowOutput

        GroupWorkflow BlockPerformance
            SubscribeSubject RightAnswers => #0
            SubscribeSubject TrialsCompleted => #1
            #0, #1 -> CombineLatest
            -> Divide
            -> MulticastSubject BlockPerformance
            -> WorkflowOutput

        GroupWorkflow BaseFT
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
              Expression: it > 0
            SubscribeSubject BaseSoundOnset => #2
            SubscribeSubject SoundOnsetDelta => #3
            #2, #3 -> CombineLatest => #4
            #1, #4 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Add => #7
            -> Condition "BaseFT <= FTTarget" => #8
                WorkflowInput Source1 => #0
                SubscribeSubject SoundOnsetTarget => #1
                #0, #1 -> Zip
                -> LessThanOrEqual
                -> WorkflowOutput
            #7 -> Condition "BaseFT > FTTarget" => #9
                WorkflowInput Source1 => #0
                SubscribeSubject SoundOnsetTarget => #1
                #0, #1 -> Zip
                -> GreaterThan
                -> WorkflowOutput
            SubscribeSubject SoundOnsetTarget => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #8, #12 -> Merge
            -> MulticastSubject BaseSoundOnset
            -> WorkflowOutput

        GroupWorkflow BaseLEDOnset
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
              Expression: it > 0
            SubscribeSubject BaseOptoOnset => #2
            SubscribeSubject OptoOnsetDelta => #3
            #2, #3 -> CombineLatest => #4
            #1, #4 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Add => #7
            -> Condition "BaseFT <= FTTarget" => #8
                WorkflowInput Source1 => #0
                SubscribeSubject OptoOnsetTarget => #1
                #0, #1 -> Zip
                -> LessThanOrEqual
                -> WorkflowOutput
            #7 -> Condition "BaseFT > FTTarget" => #9
                WorkflowInput Source1 => #0
                SubscribeSubject OptoOnsetTarget => #1
                #0, #1 -> Zip
                -> GreaterThan
                -> WorkflowOutput
            SubscribeSubject OptoOnsetTarget => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #8, #12 -> Merge
            -> MulticastSubject BaseOptoOnset
            -> WorkflowOutput

        GroupWorkflow BaseRT
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
              Expression: it > 0
            SubscribeSubject BaseRT => #2
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=ReactionTime.Delta) => #4
            #2, #4 -> CombineLatest => #5
            #1, #5 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Add => #8
            -> Condition "BaseRT <= RTTarget" => #9
                WorkflowInput Source1 => #0
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=ReactionTime.Target) => #2
                #0, #2 -> Zip
                -> LessThanOrEqual
                -> WorkflowOutput
            #8 -> Condition "BaseRT > RTTarget" => #10
                WorkflowInput Source1 => #0
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=ReactionTime.Target) => #2
                #0, #2 -> Zip
                -> GreaterThan
                -> WorkflowOutput
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=ReactionTime.Target) => #12
            #10, #12 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #14
            #9, #14 -> Merge
            -> MulticastSubject BaseRT
            -> WorkflowOutput

        GroupWorkflow IntendedLNP
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
              Expression: it > 0
            SubscribeSubject IntendedLNP => #2
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=LnpTime.Delta) => #4
            #2, #4 -> CombineLatest => #5
            #1, #5 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Add => #8
            -> Condition "IntendedLNP <= LNPTarget" => #9
                WorkflowInput Source1 => #0
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=LnpTime.Target) => #2
                #0, #2 -> Zip
                -> LessThanOrEqual
                -> WorkflowOutput
            #8 -> Condition "IntendedLNP > LNPTarget" => #10
                WorkflowInput Source1 => #0
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=LnpTime.Target) => #2
                #0, #2 -> Zip
                -> GreaterThan
                -> WorkflowOutput
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=LnpTime.Target) => #12
            #10, #12 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #14
            #9, #14 -> Merge
            -> MulticastSubject IntendedLNP
            -> WorkflowOutput

        GroupWorkflow ResponsePoke
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it < 0
            -> IntProperty(Value=0)
            -> MulticastSubject ResponsePoke
            -> WorkflowOutput

        GroupWorkflow TimedLNP
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it < 0
            -> DoubleProperty(Value=0)
            -> MulticastSubject TimedLNP
            -> WorkflowOutput

        GroupWorkflow TimedMT
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -1 || it == -2 || it == -3 || it == -4
            -> DoubleProperty(Value=0)
            -> MulticastSubject TimedMT
            -> WorkflowOutput

        GroupWorkflow TimedRT
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -1 || it == -2 || it == -3
            -> DoubleProperty(Value=0)
            -> MulticastSubject TimedRT
            -> WorkflowOutput

        GroupWorkflow TimedFT
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -1 || it == -2
            -> DoubleProperty(Value=0)
            -> MulticastSubject TimedSoundOnset
            -> WorkflowOutput

        GroupWorkflow IntendedFT
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -1
            -> DoubleProperty(Value=0)
            -> MulticastSubject IntendedSoundOnset
            -> WorkflowOutput

        GroupWorkflow TimedLEDOnset
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -1 || it == -2
            -> DoubleProperty(Value=0)
            -> MulticastSubject TimedOptoOnset
            -> WorkflowOutput

        GroupWorkflow IntendedLEDOnset
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -1
            -> DoubleProperty(Value=0)
            -> MulticastSubject IntendedOptoOnset
            -> WorkflowOutput

        GroupWorkflow TimeToCNP
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -1
            -> DoubleProperty(Value=0)
            -> MulticastSubject TimeToCNP
            -> WorkflowOutput

        GroupWorkflow PrepareNewTrial
            SubscribeSubject Outcome
            -> BooleanProperty(Value=true)
            -> MulticastSubject PrepareNewTrial
            -> WorkflowOutput

GroupWorkflow Distributions
    GroupWorkflow InitializeSubjects
        Bonsai.Numerics.CreateRandom(Seed=nil)
        -> BehaviorSubject Random

    SubscribeSubject Random
    -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
    -> BehaviorSubject SideDistribution

    SubscribeSubject Random => #4
    SubscribeSubject SetupConfig
    -> MemberSelector(Selector=Sounds.Count)
    -> Subtract(Operand=IntProperty(Value=1))
    -> PropertyMapping(Upper) => #8
    #4, #8 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=0)
    -> BehaviorSubject SoundChoiceDistribution

GroupWorkflow Hardware
    Disable GroupWorkflow Logging
        SubscribeSubject BehaviorMessages => #0
        SubscribeSubject SoundCardMessages => #1
        SubscribeSubject LeftPumpMessages => #2
        SubscribeSubject RightPumpMessages => #3
        SubscribeSubject CDMessages => #4
        #0, #1, #2, #3, #4 -> Merge => #5
        SubscribeSubject OutputFolderPath => #6
        StringProperty(Value=events.bin) => #7
        #6, #7 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 + "/" + Item2
        -> PropertyMapping(FileName) => #10
        #5, #10 -> Bonsai.Harp.MessageWriter(FileName=./output/Rat000/241212/events.bin, Suffix=FileCount, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil) => #11
        SubscribeSubject OutputFilePath => #12
        #11, #12 -> SubscribeWhen

    Disable GroupWorkflow Camera
        Bonsai.PointGrey.FlyCapture(Index=0, ColorProcessing=Default) => #0
        -> MemberSelector(Selector=Image) => #1
        SubscribeSubject OutputFolderPath => #2
        StringProperty(Value=video_.avi) => #3
        #2, #3 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 + "/" + Item2
        -> PropertyMapping(FileName) => #6
        #1, #6 -> Bonsai.Vision.VideoWriter => #7
          FileName="D:\Bonsai Videos\video_.avi"
          Suffix=Timestamp
          Buffered=true
          Overwrite=false
          FourCC=FMP4
          FrameRate=100
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=NearestNeighbor
        SubscribeSubject OutputFilePath => #8
        #7, #8 -> SubscribeWhen
        #0 -> MemberSelector(Selector="Metadata.embeddedGPIOPinState,Metadata.embeddedFrameCounter,Metadata.embeddedTimeStamp,Metadata.embeddedShutter") => #10
        SubscribeSubject OutputFolderPath => #11
        StringProperty(Value=cam_metadata_.csv) => #12
        #11, #12 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 + "/" + Item2
        -> PropertyMapping(FileName) => #15
        #10, #15 -> Bonsai.IO.CsvWriter(FileName="D:\Bonsai Videos\cam_metadata_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false) => #16
        SubscribeSubject OutputFilePath => #17
        #16, #17 -> SubscribeWhen

    ExternalizedMapping(PortName(DisplayName=BehaviorPortName))
    -> GroupWorkflow Behavior
        GroupWorkflow InitializeSubjects
            Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateDigitalInputStatePayload(DigitalInputState=None))
            -> IgnoreElements
            -> BehaviorSubject BehaviorCommands

            BooleanProperty(Value=false) => #3
            DoubleProperty(Value=0) => #4
            #3, #4 -> Zip
            -> Bonsai.Harp.CreateTimestamped
            -> BehaviorSubject LeftPoke
            -> BehaviorSubject CenterPoke
            -> BehaviorSubject RightPoke

        SubscribeSubject BehaviorCommands => #1
        ExternalizedMapping(PortName) => #2
        #1, #2 -> Harp.Behavior.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM3)
        -> BehaviorSubject BehaviorMessages

        SubscribeSubject BehaviorMessages => #5
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
        -> MemberSelector(Selector=Seconds)
        -> PublishSubject Timestamp
        #5 -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #9
        -> GroupWorkflow FilterPokeEvents
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value) => #1
            ExternalizedMapping(Value(DisplayName=Port)) => #2
            #1, #2 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort0)) => #3
            -> Condition
                SubscribeSubject SetupConfig
                -> MemberSelector(Selector=LeftPoke.LowToHigh)
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
              Expression: Convert.ToBoolean(it)
            #3 -> Condition
                SubscribeSubject SetupConfig
                -> MemberSelector(Selector=LeftPoke.LowToHigh)
                -> Equal(Operand=BooleanProperty(Value=false))
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
              Expression: !Convert.ToBoolean(it)
            #5, #7 -> Merge => #8
            #0 -> MemberSelector(Selector=Seconds) => #9
            #8, #9 -> WithLatestFrom
            -> DistinctUntilChangedBy(KeySelector=Item1)
            -> Bonsai.Harp.CreateTimestamped
            -> WorkflowOutput
        -> MulticastSubject LeftPoke
        #9 -> GroupWorkflow FilterPokeEvents
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value) => #1
            ExternalizedMapping(Value(DisplayName=Port)) => #2
            #1, #2 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort1)) => #3
            -> Condition
                SubscribeSubject SetupConfig
                -> MemberSelector(Selector=CenterPoke.LowToHigh)
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
              Expression: Convert.ToBoolean(it)
            #3 -> Condition
                SubscribeSubject SetupConfig
                -> MemberSelector(Selector=CenterPoke.LowToHigh)
                -> Equal(Operand=BooleanProperty(Value=false))
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
              Expression: !Convert.ToBoolean(it)
            #5, #7 -> Merge => #8
            #0 -> MemberSelector(Selector=Seconds) => #9
            #8, #9 -> WithLatestFrom
            -> DistinctUntilChangedBy(KeySelector=Item1)
            -> Bonsai.Harp.CreateTimestamped
            -> WorkflowOutput
        -> MulticastSubject CenterPoke
        #9 -> GroupWorkflow FilterPokeEvents
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value) => #1
            ExternalizedMapping(Value(DisplayName=Port)) => #2
            #1, #2 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort2)) => #3
            -> Condition
                SubscribeSubject SetupConfig
                -> MemberSelector(Selector=RightPoke.LowToHigh)
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
              Expression: Convert.ToBoolean(it)
            #3 -> Condition
                SubscribeSubject SetupConfig
                -> MemberSelector(Selector=RightPoke.LowToHigh)
                -> Equal(Operand=BooleanProperty(Value=false))
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
              Expression: !Convert.ToBoolean(it)
            #5, #7 -> Merge => #8
            #0 -> MemberSelector(Selector=Seconds) => #9
            #8, #9 -> WithLatestFrom
            -> DistinctUntilChangedBy(KeySelector=Item1)
            -> Bonsai.Harp.CreateTimestamped
            -> WorkflowOutput
        -> MulticastSubject RightPoke

        Disable Annotation LeftRewardPulseConfig(Text="") => #16
        -> Disable Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=DO1))
        -> Disable MulticastSubject BehaviorCommands
        #16 -> Disable SubscribeSubject RewardOpenL
        -> Disable PropertyMapping(PulseDO1)
        -> Disable Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO1Payload(PulseDO1=79))
        -> Disable MulticastSubject BehaviorCommands

        Disable Annotation RightRewardPulseConfig(Text="") => #23
        -> Disable Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=DO2))
        -> Disable MulticastSubject BehaviorCommands
        #23 -> Disable SubscribeSubject RewardOpenR
        -> Disable PropertyMapping(PulseDO2)
        -> Disable Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO2Payload(PulseDO2=99))
        -> Disable MulticastSubject BehaviorCommands

        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateLed0CurrentPayload(Led0Current=10))
        -> MulticastSubject BehaviorCommands

        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateLed1CurrentPayload(Led1Current=10))
        -> MulticastSubject BehaviorCommands

    ExternalizedMapping(PortName(DisplayName=SoundCardPortName))
    -> GroupWorkflow SoundCard
        SubscribeSubject SoundCardCommands => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Harp.SoundCard.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM17)
        -> BehaviorSubject SoundCardMessages

        SubscribeSubject PlaySound => #4
        SubscribeSubject SoundIndex
        -> PropertyMapping(PlaySoundOrFrequency) => #6
        #4, #6 -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(PlaySoundOrFrequency=2))
        -> MulticastSubject SoundCardCommands

        SubscribeSubject LeftIntensity => #9
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Speakers.LeftSlope) => #11
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Speakers.LeftIntercept) => #13
        #11, #13 -> Zip => #14
        #9, #14 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: - 20 * (Item1 - Item2.Item2) / Item2.Item1
        -> MulticastSubject LeftAmp
        -> Multiply(Operand=DoubleProperty(Value=10))
        -> InputMapping(Selector=it, AttenuationLeft(Selector=it))
        -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateAttenuationLeftPayload(AttenuationLeft=588))
        -> MulticastSubject SoundCardCommands

        SubscribeSubject RightIntensity => #22
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Speakers.RightSlope) => #24
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Speakers.RightIntercept) => #26
        #24, #26 -> Zip => #27
        #22, #27 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: - 20 * (Item1 - Item2.Item2) / Item2.Item1
        -> MulticastSubject RightAmp
        -> Multiply(Operand=DoubleProperty(Value=10))
        -> InputMapping(Selector=it, AttenuationRight(Selector=it))
        -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateAttenuationRightPayload(AttenuationRight=75))
        -> MulticastSubject SoundCardCommands

    ExternalizedMapping(PortName(DisplayName=CurrentDriverPortName))
    -> GroupWorkflow CurrentDriver
        GroupWorkflow "OptoProtocol (WIP)"
            IntProperty(Value=0)
            -> IgnoreElements
            -> BehaviorSubject StartOpto

            IntProperty(Value=0)
            -> IgnoreElements
            -> BehaviorSubject EndOpto

            Disable IntProperty(Value=0)
            -> Disable SelectMany RampIn
                WorkflowInput Source1
                -> WorkflowOutput

                ExternalizedMapping(Value(DisplayName=RampTimeInTicks))
                -> IntProperty(Value=0) => #3
                ExternalizedMapping(Value(DisplayName=Intensity)) => #4
                -> IntProperty(Value=0) => #5
                #3, #5 -> Zip
                -> Divide
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromTicks(it)
                -> PropertyMapping(Period)
                -> Timer(DueTime=PT0S, Period=PT0.001923S) => #10
                #4 -> IntProperty(Value=0)
                -> Add(Operand=IntProperty(Value=1))
                -> PropertyMapping(Count) => #13
                #10, #13 -> Take(Count=53)
                -> InputMapping(Selector=it, Dac0Voltage(Selector=it))
                -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateDac0VoltagePayload(Dac0Voltage=1000))
                -> MulticastSubject CDCommands
            -> Disable Delay(DueTime=PT0S)
            -> Disable SelectMany RampOut
                WorkflowInput Source1
                -> WorkflowOutput

                IntProperty(Value=0) => #2
                ExternalizedMapping(Value(DisplayName=RampTimeInTicks))
                -> IntProperty(Value=0) => #4
                ExternalizedMapping(Value(DisplayName=Intensity)) => #5
                -> IntProperty(Value=0) => #6
                #4, #6 -> Zip
                -> Divide
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromTicks(it)
                -> PropertyMapping(Period)
                -> Timer(DueTime=PT0S, Period=PT0.001923S) => #11
                #5 -> IntProperty(Value=0)
                -> Add(Operand=IntProperty(Value=1))
                -> PropertyMapping(Count) => #14
                #11, #14 -> Take(Count=53) => #15
                #2, #15 -> CombineLatest
                -> Subtract
                -> InputMapping(Selector=it, Dac0Voltage(Selector=it))
                -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateDac0VoltagePayload(Dac0Voltage=1000))
                -> MulticastSubject CDCommands

            SubscribeSubject StartOpto => #10
            -> Condition
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=Optogenetics.UsePulses) => #1
                SubscribeSubject LEDTrial
                -> NotEqual(Operand=DoubleProperty(Value=0)) => #3
                #1, #3 -> Zip
                -> LogicalAnd
                -> WorkflowOutput
            -> SelectMany Pulses
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=Optogenetics.Duration)
                -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime)
                -> Timer(DueTime=PT4S, Period=PT0S) => #4
                DoubleProperty(Value=1) => #5
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=Optogenetics.Frequency) => #7
                #5, #7 -> CombineLatest
                -> Divide
                -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(Period)
                -> Timer(DueTime=PT0S, Period=PT0.05S)
                -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateDac0VoltagePayload(Dac0Voltage=1500))
                -> MulticastSubject CDCommands => #14
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=Optogenetics.PulseDuration)
                -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
                  Expression: TimeSpan.FromMilliseconds(it)
                -> PropertyMapping(DueTime) => #18
                #14, #18 -> Delay(DueTime=PT0.02S)
                -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateDac0VoltagePayload(Dac0Voltage=0))
                -> MulticastSubject CDCommands => #21
                #4, #21 -> WithLatestFrom
                -> Take(Count=1)
                -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateDac0VoltagePayload(Dac0Voltage=0))
                -> MulticastSubject CDCommands
                -> Take(Count=1)
                -> WorkflowOutput
            #10 -> Condition
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=Optogenetics.UsePulses)
                -> Equal(Operand=BooleanProperty(Value=false)) => #2
                SubscribeSubject LEDTrial
                -> NotEqual(Operand=DoubleProperty(Value=0)) => #4
                #2, #4 -> Zip
                -> LogicalAnd
                -> WorkflowOutput
            -> GroupWorkflow Continuous
                WorkflowInput Source1 => #0
                ExternalizedMapping(Dac0Voltage) => #1
                #0, #1 -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateDac0VoltagePayload(Dac0Voltage=1500))
                -> BehaviorSubject CDCommands => #3
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=Optogenetics.Duration)
                -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #7
                #3, #7 -> Delay(DueTime=PT1S)
                -> IntProperty(Value=0)
                -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateDac0VoltagePayload(Dac0Voltage=0))
                -> MulticastSubject CDCommands
                -> WorkflowOutput

            SubscribeSubject EndOpto
            -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateDac0VoltagePayload(Dac0Voltage=0))
            -> MulticastSubject CDCommands

        SubscribeSubject CDCommands => #1
        ExternalizedMapping(PortName) => #2
        #1, #2 -> Harp.CurrentDriver.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COMx) => #3
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=Optogenetics.UseOpto)
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #6
          Expression: it
        #3, #6 -> SubscribeWhen
        -> BehaviorSubject CDMessages

    ExternalizedMapping(PortName(DisplayName=LeftSyringePumpPortName))
    -> GroupWorkflow LeftSyringePump
        DoubleProperty(Value=1)
        -> BehaviorSubject LeftMultiplier

        SubscribeSubject LeftPumpCommands => #2
        ExternalizedMapping(PortName) => #3
        #2, #3 -> Harp.SyringePump.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COMx) => #4
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=SyringePumps.UsePumps)
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #7
          Expression: it
        #4, #7 -> SubscribeWhen
        -> BehaviorSubject LeftPumpMessages

        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolDirectionPayload(ProtocolDirection=Forward)) => #10
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=BaseReward) => #12
        SubscribeSubject LeftMultiplier => #13
        #12, #13 -> CombineLatest
        -> Multiply => #15
        SubscribeSubject SetupConfig => #16
        -> MemberSelector(Selector=SyringePumps.LeftSlope) => #17
        #16 -> MemberSelector(Selector=SyringePumps.LeftIntercept) => #18
        #15, #17, #18 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Convert.ToInt32((Item1 - Item3) / Item2)
        -> InputMapping(Selector=it, ProtocolStepCount(Selector=it))
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolStepCountPayload(ProtocolStepCount=75)) => #22
        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolPeriodPayload(ProtocolPeriod=10)) => #23
        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateStepModePayload(StepMode=Half)) => #24
        #10, #22, #23, #24 -> Merge
        -> BehaviorSubject LeftPumpCommands

    ExternalizedMapping(PortName(DisplayName=RightSyringePumpPortName))
    -> GroupWorkflow RightSyringePump
        DoubleProperty(Value=1)
        -> BehaviorSubject RightMultiplier

        SubscribeSubject RightPumpCommands => #2
        ExternalizedMapping(PortName) => #3
        #2, #3 -> Harp.SyringePump.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COMx) => #4
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=SyringePumps.UsePumps)
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #7
          Expression: it
        #4, #7 -> SubscribeWhen
        -> BehaviorSubject RightPumpMessages

        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolDirectionPayload(ProtocolDirection=Forward)) => #10
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=BaseReward) => #12
        SubscribeSubject RightMultiplier => #13
        #12, #13 -> CombineLatest
        -> Multiply => #15
        SubscribeSubject SetupConfig => #16
        -> MemberSelector(Selector=SyringePumps.RightSlope) => #17
        #16 -> MemberSelector(Selector=SyringePumps.RightIntercept) => #18
        #15, #17, #18 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Convert.ToInt32((Item1 - Item3) / Item2)
        -> InputMapping(Selector=it, ProtocolStepCount(Selector=it))
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolStepCountPayload(ProtocolStepCount=75)) => #22
        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolPeriodPayload(ProtocolPeriod=10)) => #23
        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateStepModePayload(StepMode=Half)) => #24
        #10, #22, #23, #24 -> Merge
        -> BehaviorSubject RightPumpCommands

GroupWorkflow FileIO
    GroupWorkflow Input
        Bonsai.IO.ReadAllText(Path=config\animal.yml)
        -> Animal.DeserializeFromYaml(Type=TypeMapping<Animal.Animal>)
        -> AsyncSubject AnimalConfig

        Bonsai.IO.ReadAllText(Path=config\training-test.json)
        -> Training.DeserializeFromJson(Type=TypeMapping<Training.Training>)
        -> AsyncSubject TrainingConfig

        Bonsai.IO.ReadAllText(Path=config\setup-test.json)
        -> SetupList.DeserializeFromJson(Type=TypeMapping<SetupList.SetupList>)
        -> MemberSelector(Selector=Setups) => #8
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=Session.SetupId) => #10
        #8, #10 -> Zip
        -> InputMapping(Selector=Item1, Value(Selector=Item2))
        -> Index(Operand=IntProperty(Value=0))
        -> Take(Count=1)
        -> AsyncSubject SetupConfig

        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=Session.StartingTrainingLevel)
        -> BehaviorSubject TrainingLevel

        SubscribeSubject TrainingLevel
        -> Subtract(Operand=IntProperty(Value=1)) => #20
        SubscribeSubject TrainingConfig
        -> MemberSelector(Selector=Levels) => #22
        #20, #22 -> WithLatestFrom
        -> InputMapping(Selector=Item2, Value(Selector=Item1))
        -> Index(Operand=IntProperty(Value=0))
        -> BehaviorSubject LevelConfig

        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=TrialRepetition.RepeatErrors)
        -> BehaviorSubject RepeatErrors

    GroupWorkflow Output
        SubscribeSubject SaveTrial => #0
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=AnimalId)
        -> PropertyMapping(AnimalId) => #3
        SubscribeSubject Trial
        -> IntProperty(Value=0)
        -> PropertyMapping(Number) => #6
        SubscribeSubject TrialStart
        -> DoubleProperty(Value=0)
        -> PropertyMapping(StartTime) => #9
        SubscribeSubject TrialEnd
        -> DoubleProperty(Value=0)
        -> PropertyMapping(EndTime) => #12
        SubscribeSubject TrialEnd => #13
        SubscribeSubject TrialStart => #14
        #13, #14 -> CombineLatest
        -> Subtract
        -> PropertyMapping(Duration) => #17
        #6, #9, #12, #17 -> Output.Trial(Number=0, StartTime=0, EndTime=0, Duration=0)
        -> PropertyMapping(Trial) => #19
        SubscribeSubject Block
        -> PropertyMapping(Number) => #21
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=LevelId)
        -> PropertyMapping(TrainingLevel) => #24
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=TrialsPerBlock)
        -> PropertyMapping(TrialsPerBlock) => #27
        #21, #24, #27 -> Output.Block(Number=0, TrainingLevel=1, TrialsPerBlock=200)
        -> PropertyMapping(Block) => #29
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=Session.Number)
        -> PropertyMapping(Number) => #32
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=Session.Type)
        -> PropertyMapping(Type) => #35
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=Session.SetupId)
        -> PropertyMapping(SetupId) => #38
        #32, #35, #38 -> Output.Session(Number=1, Type=1, SetupId=0)
        -> PropertyMapping(Session) => #40
        SubscribeSubject ABL
        -> PropertyMapping(Abl) => #42
        SubscribeSubject ILD
        -> PropertyMapping(Ild) => #44
        SubscribeSubject SoundIndex
        -> PropertyMapping(SoundIndex) => #46
        SubscribeSubject LeftAmp
        -> PropertyMapping(LeftAmplification) => #48
        SubscribeSubject RightAmp
        -> PropertyMapping(RightAmplification) => #50
        #42, #44, #46, #48, #50 -> Output.Sound(Abl=0, Ild=0, SoundIndex=0, LeftAmplification=0, RightAmplification=0)
        -> PropertyMapping(Sound) => #52
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=Iti.Value)
        -> PropertyMapping(IntendedDuration) => #55
        SubscribeSubject ITIStart
        -> DoubleProperty(Value=0)
        -> PropertyMapping(StartTime) => #58
        SubscribeSubject ITIEnd
        -> DoubleProperty(Value=0)
        -> PropertyMapping(EndTime) => #61
        SubscribeSubject ITIEnd => #62
        SubscribeSubject ITIStart => #63
        #62, #63 -> CombineLatest
        -> Subtract
        -> PropertyMapping(TimedDuration) => #66
        #55, #58, #61, #66 -> Output.ITI(IntendedDuration=1, StartTime=0, EndTime=0, TimedDuration=0)
        -> PropertyMapping(Iti) => #68
        SubscribeSubject TimeToCNP
        -> PropertyMapping(TimedValue) => #70
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=MaxWait)
        -> PropertyMapping(MaxDuration) => #73
        #70, #73 -> Output.TimeToCnp(TimedValue=0, MaxDuration=180)
        -> PropertyMapping(TimeToCnp) => #75
        SubscribeSubject BaseOptoOnset
        -> PropertyMapping(BaseTime) => #77
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=FixationTime.OptoExpMean)
        -> PropertyMapping(ExpMean) => #80
        SubscribeSubject IntendedOptoOnset
        -> PropertyMapping(IntendedDuration) => #82
        SubscribeSubject TimedOptoOnset
        -> PropertyMapping(TimedDuration) => #84
        #77, #80, #82, #84 -> Output.FixationTimeParts(BaseTime=0, ExpMean=0, IntendedDuration=0, TimedDuration=0)
        -> PropertyMapping(OptoOnsetTime) => #86
        SubscribeSubject BaseSoundOnset
        -> PropertyMapping(BaseTime) => #88
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=FixationTime.SoundExpMean)
        -> PropertyMapping(ExpMean) => #91
        SubscribeSubject IntendedSoundOnset
        -> PropertyMapping(IntendedDuration) => #93
        SubscribeSubject TimedSoundOnset
        -> PropertyMapping(TimedDuration) => #95
        #88, #91, #93, #95 -> Output.FixationTimeParts(BaseTime=0, ExpMean=0, IntendedDuration=0, TimedDuration=0)
        -> PropertyMapping(SoundOnsetTime) => #97
        #86, #97 -> Output.FixationTime
        -> PropertyMapping(FixationTime) => #99
        SubscribeSubject BaseRT
        -> PropertyMapping(BaseTime) => #101
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=MaxReactionTime)
        -> PropertyMapping(MaxDuration) => #104
        SubscribeSubject TimedRT
        -> PropertyMapping(TimedDuration) => #106
        #101, #104, #106 -> Output.ReactionTime(BaseTime=0, MaxDuration=10, TimedDuration=0)
        -> PropertyMapping(ReactionTime) => #108
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=MaxMt)
        -> PropertyMapping(MaxDuration) => #111
        SubscribeSubject TimedMT
        -> PropertyMapping(TimedDuration) => #113
        #111, #113 -> Output.MovementTime(MaxDuration=180, TimedDuration=0)
        -> PropertyMapping(MovementTime) => #115
        SubscribeSubject IntendedLNP
        -> PropertyMapping(IntendedDuration) => #117
        SubscribeSubject TimedLNP
        -> PropertyMapping(TimedDuration) => #119
        #117, #119 -> Output.LnpTime(IntendedDuration=0, TimedDuration=0)
        -> PropertyMapping(LnpTime) => #121
        SubscribeSubject ResponsePoke
        -> PropertyMapping(ResponsePoke) => #123
        SubscribeSubject Outcome
        -> PropertyMapping(Value) => #125
        #123, #125 -> Output.Outcome(ResponsePoke=0, Value=0, BlockPerformance=0, BlockAbortRatio=0)
        -> PropertyMapping(Outcome) => #127
        SubscribeSubject RepeatTrial
        -> PropertyMapping(RepeatedTrial) => #129
        BooleanProperty(Value=false)
        -> PropertyMapping(OptoTrial) => #131
        DoubleProperty(Value=0)
        -> PropertyMapping(Duration) => #133
        DoubleProperty(Value=0)
        -> PropertyMapping(LeftPower) => #135
        DoubleProperty(Value=0)
        -> PropertyMapping(RightPower) => #137
        #131, #133, #135, #137 -> Output.Optogenetics(OptoTrial=false, Duration=0, LeftPower=0, RightPower=0)
        -> PropertyMapping(Optogenetics) => #139
        #0, #3, #19, #29, #40, #52, #68, #75, #99, #108, #115, #121, #127, #129, #139 -> Output.Output(AnimalId=1, RepeatedTrial=false)
        -> Output.SerializeToJson
        -> JsonWriter(Path=output\out.json, Suffix=FileCount, Overwrite=false)

    SubscribeSubject AnimalConfig
    -> MemberSelector(Selector=Session.StartingBlockNumber)
    -> MulticastSubject Block

    SubscribeSubject AnimalConfig
    -> MemberSelector(Selector=Session.StartingTrialNumber)
    -> MulticastSubject Trial

    SubscribeSubject AnimalConfig => #8
    -> MemberSelector(Selector=FixationTime.OptoOnsetTime.MinValue)
    -> MulticastSubject BaseOptoOnset
    #8 -> MemberSelector(Selector=FixationTime.OptoOnsetTime.Delta)
    -> MulticastSubject OptoOnsetDelta
    #8 -> MemberSelector(Selector=FixationTime.OptoOnsetTime.Target)
    -> MulticastSubject OptoOnsetTarget

    SubscribeSubject AnimalConfig => #15
    -> MemberSelector(Selector=FixationTime.SoundOnsetTime.MinValue)
    -> MulticastSubject BaseSoundOnset
    #15 -> MemberSelector(Selector=FixationTime.SoundOnsetTime.Delta)
    -> MulticastSubject SoundOnsetDelta
    #15 -> MemberSelector(Selector=FixationTime.SoundOnsetTime.Target)
    -> MulticastSubject SoundOnsetTarget

    SubscribeSubject AnimalConfig
    -> MemberSelector(Selector=ReactionTime.MinValue)
    -> MulticastSubject BaseRT

    SubscribeSubject AnimalConfig
    -> MemberSelector(Selector=LnpTime.MinValue)
    -> MulticastSubject IntendedLNP

GroupWorkflow SubjectInitialization
    GroupWorkflow InitializeSubjects
        Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(PlaySoundOrFrequency=2))
        -> IgnoreElements
        -> BehaviorSubject SoundCardCommands

        IntProperty(Value=0)
        -> IgnoreElements
        -> BehaviorSubject PlaySound

        IntProperty(Value=2)
        -> BehaviorSubject SoundIndex

        IntProperty(Value=0)
        -> BehaviorSubject LeftIntensity

        IntProperty(Value=0)
        -> BehaviorSubject RightIntensity

    DoubleProperty(Value=0)
    -> IgnoreElements
    -> BehaviorSubject SaveTrial

    DoubleProperty(Value=0)
    -> BehaviorSubject ILDIndex

    DoubleProperty(Value=0)
    -> BehaviorSubject ITIStart

    DoubleProperty(Value=0)
    -> BehaviorSubject ITIEnd

    DoubleProperty(Value=0)
    -> BehaviorSubject TrialsCompleted

    DoubleProperty(Value=0)
    -> BehaviorSubject TrialsAborted

    DoubleProperty(Value=0)
    -> BehaviorSubject RightAnswers

    IntProperty(Value=0)
    -> BehaviorSubject BlockTrial

    DoubleProperty(Value=0)
    -> IgnoreElements
    -> BehaviorSubject LNPStart

    DoubleProperty(Value=0)
    -> ToArray
    -> IgnoreElements
    -> BehaviorSubject ShuffledILDs

    IntProperty(Value=0)
    -> IgnoreElements
    -> BehaviorSubject LeftOrRight

    DoubleProperty(Value=0)
    -> BehaviorSubject Penalty

    DoubleProperty(Value=0)
    -> BehaviorSubject LEDStart

    DoubleProperty(Value=0)
    -> ToArray
    -> IgnoreElements
    -> BehaviorSubject ILDs

    DoubleProperty(Value=0)
    -> BehaviorSubject NewILDShuffle

    DoubleProperty(Value=0)
    -> BehaviorSubject ABL

    DoubleProperty(Value=0)
    -> BehaviorSubject ILD

    DoubleProperty(Value=17)
    -> BehaviorSubject LeftAmp

    DoubleProperty(Value=18)
    -> BehaviorSubject RightAmp

    IntProperty(Value=0)
    -> BehaviorSubject WaveformL

    IntProperty(Value=0)
    -> BehaviorSubject WaveformR

    DoubleProperty(Value=0)
    -> IgnoreElements
    -> BehaviorSubject TrialStart

    DoubleProperty(Value=0)
    -> IgnoreElements
    -> BehaviorSubject TrialEnd

    DoubleProperty(Value=0)
    -> BehaviorSubject TimeToCNP

    DoubleProperty(Value=0)
    -> BehaviorSubject IntendedSoundOnset

    DoubleProperty(Value=0)
    -> BehaviorSubject TimedSoundOnset

    DoubleProperty(Value=0)
    -> BehaviorSubject IntendedOptoOnset

    DoubleProperty(Value=0)
    -> BehaviorSubject TimedOptoOnset

    DoubleProperty(Value=0)
    -> BehaviorSubject TimedRT

    DoubleProperty(Value=0)
    -> BehaviorSubject TimedMT

    DoubleProperty(Value=0)
    -> BehaviorSubject TimedLNP

    IntProperty(Value=0)
    -> BehaviorSubject ResponsePoke

    IntProperty(Value=0)
    -> IgnoreElements
    -> BehaviorSubject Outcome

    BooleanProperty(Value=false)
    -> BehaviorSubject RepeatTrial

    DoubleProperty(Value=0)
    -> BehaviorSubject BlockPerformance

    DoubleProperty(Value=0)
    -> BehaviorSubject BlockAbortRatio

    DoubleProperty(Value=13)
    -> BehaviorSubject LEDTrial

    DoubleProperty(Value=14)
    -> BehaviorSubject TimedLED

    DoubleProperty(Value=15)
    -> BehaviorSubject LEDPowerL

    DoubleProperty(Value=16)
    -> BehaviorSubject LEDPowerR

    IntProperty(Value=0)
    -> BehaviorSubject Block
    -> BehaviorSubject Trial

    DoubleProperty(Value=0)
    -> BehaviorSubject BaseOptoOnset
    -> BehaviorSubject OptoOnsetDelta
    -> BehaviorSubject OptoOnsetTarget
    -> BehaviorSubject BaseSoundOnset
    -> BehaviorSubject SoundOnsetDelta
    -> BehaviorSubject SoundOnsetTarget
    -> BehaviorSubject BaseRT
    -> BehaviorSubject IntendedLNP

GroupWorkflow PythonCommunication
    GroupWorkflow MessagesSent
        GroupWorkflow InitializeSubjects
            IntProperty(Value=0)
            -> IgnoreElements
            -> BehaviorSubject BeginningMessage

            BooleanProperty(Value=false)
            -> IgnoreElements
            -> BehaviorSubject PlotsMessage

            IntProperty(Value=0)
            -> BehaviorSubject BlockMessage

        Bonsai.Osc.CreateUdpClient(Name=UdpClient, Port=0, RemoteHostName=localhost, RemotePort=2)

        GroupWorkflow PlotMessage
            SubscribeSubject PlotsMessage => #0
            SubscribeSubject Outcome => #1
            SubscribeSubject TimeToCNP => #2
            SubscribeSubject TimedRT => #3
            SubscribeSubject TimedMT => #4
            SubscribeSubject BlockPerformance => #5
            SubscribeSubject BlockAbortRatio => #6
            SubscribeSubject TrialsCompleted => #7
            #1, #2, #3, #4, #5, #6, #7 -> CombineLatest => #8
            #0, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Osc.SendMessage(Connection=UdpClient, Address=/plots)
            -> WorkflowOutput

        GroupWorkflow NewTrialMessage
            SubscribeSubject BeginningMessage => #0
            SubscribeSubject BlockTrial => #1
            SubscribeSubject ILD => #2
            SubscribeSubject ABL => #3
            SubscribeSubject IntendedSoundOnset => #4
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=Iti.Value) => #6
            #1, #2, #3, #4, #6 -> CombineLatest => #7
            #0, #7 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Osc.SendMessage(Connection=UdpClient, Address=/beginning)
            -> WorkflowOutput

        GroupWorkflow BlockMessage
            SubscribeSubject BlockMessage => #0
            SubscribeSubject ILDs => #1
            #0, #1 -> SubscribeWhen => #2
            #2, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #4
            -> MemberSelector(Selector=Length)
            -> Add(Operand=IntProperty(Value=1))
            -> PropertyMapping(Count) => #7
            #4, #7 -> SelectMany
                Timer(DueTime=PT0S, Period=PT0.001S)
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
                  Expression: Convert.ToInt32(it)
                WorkflowInput Source1
                -> SelectMany => #3
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Length)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: Convert.ToDouble(it)
                    #0 -> Concat => #3
                    #2, #3 -> Merge
                    -> WorkflowOutput
                #1, #3 -> Zip => #4
                ExternalizedMapping(Count) => #5
                #4, #5 -> Take(Count=3) => #6
                -> Bonsai.Scripting.Expressions.ExpressionCondition
                  Expression: Item1 != 0
                -> Delay(DueTime=PT1S) => #8
                #6 -> Bonsai.Scripting.Expressions.ExpressionCondition => #9
                  Expression: Item1 == 0
                #8, #9 -> Merge
                -> WorkflowOutput
            -> Bonsai.Osc.SendMessage(Connection=UdpClient, Address=/block)
            -> WorkflowOutput

        SubscribeSubject RepeatErrors
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Convert.ToInt32(it)
        -> Bonsai.Osc.SendMessage(Connection=UdpClient, Address=/repeaterrors)

    GroupWorkflow MessagesReceived
        Bonsai.Osc.CreateUdpClient(Name=UdpServer, Port=1, RemoteHostName=localhost, RemotePort=0)

        Bonsai.Osc.ReceiveMessage(Address=/reward, TypeTag=i, Connection=UdpServer)
        -> BehaviorSubject WaterDelivery

        Bonsai.Osc.ReceiveMessage(Address=/repeat, TypeTag=i, Connection=UdpServer) => #3
        SubscribeSubject RepeatErrors => #4
        #3, #4 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: !it
        -> MulticastSubject RepeatErrors

BooleanProperty(Value=true)
-> SelectMany Inter-TrialInterval => #8
    GroupWorkflow BoxLEDOn
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=Cues.ItiLight) => #1
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=Led0))
        -> MulticastSubject BehaviorCommands => #4
        #1 -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: !it
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=Led0))
        -> MulticastSubject BehaviorCommands => #7
        #4, #7 -> Merge
        -> WorkflowOutput

    WorkflowInput Source1
    -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=0, PrintSubjectName=PrintNumber) => #2
    -> GroupWorkflow ITI
        WorkflowInput Source1
        -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp)
        -> MemberSelector(Selector=Seconds)
        -> MulticastSubject ITIStart => #3
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=Iti.Value)
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #7
        #3, #7 -> Delay(DueTime=PT1S)
        -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp)
        -> MemberSelector(Selector=Seconds)
        -> MulticastSubject ITIEnd
        -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=1, PrintSubjectName=PrintNumber)
        -> WorkflowOutput
    -> IntProperty(Value=0)
    -> MulticastSubject BeginningMessage => #5
    GroupWorkflow ITIReset
        SubscribeSubject CenterPoke
        -> Condition IsPokingCNP(Description="Triggers if the animal is poking the central nose poke and if  ITIReset setting is equal to 1 (not equal to 0)")
            WorkflowInput Source1
            -> MemberSelector(Selector=Value) => #1
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=Iti.CanReset) => #3
            #1, #3 -> CombineLatest
            -> LogicalAnd
            -> WorkflowOutput
        -> WorkflowOutput
    -> IntProperty(Value=1) => #7
    #5, #7 -> Merge => #8
    #2 -> GroupWorkflow NewTrialPreparations => #9
        WorkflowInput Source1 => #0
        -> Condition
            SubscribeSubject PrepareNewTrial
            -> WorkflowOutput
        -> MulticastSubject RequestNewTrial
        -> BooleanProperty(Value=false)
        -> MulticastSubject PrepareNewTrial => #4
        #0 -> Condition => #5
            SubscribeSubject PrepareNewTrial
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        #4, #5 -> Merge
        -> WorkflowOutput
    #8, #9 -> Zip
    -> MemberSelector(Selector=Item1) => #11
    Source2=#11 -> Take(Count=1)
    -> WorkflowOutput
-> Bonsai.Scripting.Expressions.ExpressionCondition IsTrue
  Expression: it == 0
-> SelectMany StartTrial => #10
    GroupWorkflow LEDs
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=Led0))
        -> MulticastSubject BehaviorCommands

        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=Cues.PokeLight)
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=Led1))
        -> MulticastSubject BehaviorCommands

    IntProperty(Value=0) => #1
    WorkflowInput Source1
    -> SelectMany PrintRequest
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=PrintNumber))
        -> IntProperty(Value=5)
        -> MulticastSubject PrintNumber => #3
        #0, #3 -> Zip
        -> MemberSelector(Selector=Item1)
        -> Take(Count=1)
        -> WorkflowOutput
    -> GroupWorkflow PokeDetection => #4
        SubscribeSubject CenterPoke
        -> Bonsai.Scripting.Expressions.ExpressionCondition IsPokingCNP
          Expression: Value
        -> MemberSelector(Selector=Seconds) => #2
        -> WorkflowOutput
        WorkflowInput Source1
        -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp)
        -> MemberSelector(Selector=Seconds)
        -> MulticastSubject TrialStart => #7
        #2, #7 -> Zip
        -> Subtract
        -> MulticastSubject TimeToCNP
    #1, #4 -> Zip
    -> MemberSelector(Selector=Item1) => #6
    GroupWorkflow MaxWait
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=MaxWait)
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
          Expression: TimeSpan.FromSeconds(it)
        -> WorkflowOutput
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT3M, Period=PT0S)
    -> IntProperty(Value=-1) => #10
    #6, #10 -> Merge
    -> Take(Count=1)
    -> WorkflowOutput
-> Bonsai.Scripting.Expressions.ExpressionCondition IsTrue
  Expression: it == 0
-> SelectMany FixationTime => #12
    GroupWorkflow PokeLEDBlink
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Lights.PokePeriod)
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
          Expression: TimeSpan.FromMilliseconds(it)
        -> PropertyMapping(Period)
        -> Timer(DueTime=PT0S, Period=PT1S)
        -> Condition
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=Cues.FixationLight)
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=Led1))
        -> MulticastSubject BehaviorCommands => #7
        SubscribeSubject SetupConfig => #8
        -> MemberSelector(Selector=Lights.PokePeriod) => #9
        #8 -> MemberSelector(Selector=Lights.PokeDutyCycle) => #10
        #9, #10 -> Zip
        -> Multiply
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
          Expression: TimeSpan.FromMilliseconds(it)
        -> PropertyMapping(DueTime) => #14
        #7, #14 -> Delay(DueTime=PT0.5S)
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=Led1))
        -> MulticastSubject BehaviorCommands
        -> WorkflowOutput

    WorkflowInput Source1
    -> SelectMany PrintRequest
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=PrintNumber))
        -> IntProperty(Value=6)
        -> MulticastSubject PrintNumber => #3
        #0, #3 -> Zip
        -> MemberSelector(Selector=Item1)
        -> Take(Count=1)
        -> WorkflowOutput

    GroupWorkflow OptoOnsetTime
        SubscribeSubject IntendedOptoOnset
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
          Expression: TimeSpan.FromMilliseconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT0.005S, Period=PT0S)
        -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp)
        -> MemberSelector(Selector=Seconds)
        -> MulticastSubject LEDStart => #6
        SubscribeSubject CenterPoke
        -> Bonsai.Scripting.Expressions.ExpressionCondition IsPokingCNP
          Expression: Value
        -> MemberSelector(Selector=Seconds) => #9
        #6, #9 -> WithLatestFrom
        -> Subtract
        -> MulticastSubject TimedOptoOnset
        -> MulticastSubject StartOpto
        -> WorkflowOutput
    -> GroupWorkflow SoundOnsetTime => #4
        WorkflowInput Source1 => #0
        SubscribeSubject IntendedSoundOnset
        -> SelectMany PrintRequest
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=PrintNumber))
            -> IntProperty(Value=14)
            -> MulticastSubject PrintNumber => #3
            #0, #3 -> Zip
            -> MemberSelector(Selector=Item1)
            -> Take(Count=1)
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
          Expression: TimeSpan.FromMilliseconds(it)
        -> PropertyMapping(DueTime) => #4
        #0, #4 -> Delay(DueTime=PT0.005S)
        -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp)
        -> MemberSelector(Selector=Seconds) => #7
        SubscribeSubject LEDStart => #8
        #7, #8 -> WithLatestFrom
        -> Subtract
        -> MulticastSubject TimedSoundOnset
        -> IntProperty(Value=0)
        -> WorkflowOutput
    GroupWorkflow FixationBroken => #5
        SubscribeSubject CenterPoke => #0
        -> Bonsai.Scripting.Expressions.ExpressionCondition !IsPokingCNP
          Expression: !Value
        -> MemberSelector(Selector=Seconds) => #2
        #0 -> Bonsai.Scripting.Expressions.ExpressionCondition IsPokingCNP
          Expression: Value
        -> MemberSelector(Selector=Seconds) => #4
        #2, #4 -> Zip
        -> Subtract
        -> MulticastSubject TimedSoundOnset
        -> IntProperty(Value=-2)
        -> WorkflowOutput
    #4, #5 -> Merge
    -> SelectMany PrintRequest
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=PrintNumber))
        -> IntProperty(Value=7)
        -> MulticastSubject PrintNumber => #3
        #0, #3 -> Zip
        -> MemberSelector(Selector=Item1)
        -> Take(Count=1)
        -> WorkflowOutput
    -> Take(Count=1)
    -> WorkflowOutput
-> Bonsai.Scripting.Expressions.ExpressionCondition IsTrue
  Expression: it == 0
-> SelectMany Stimulus => #14
    GroupWorkflow PokeLEDOff
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=Led1))
        -> MulticastSubject BehaviorCommands
        -> WorkflowOutput

    SubscribeSubject AnimalConfig
    -> MemberSelector(Selector=Optogenetics.Duration)
    -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT1S, Period=PT0S)
    -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp)
    -> MemberSelector(Selector=Seconds) => #7
    SubscribeSubject LEDStart => #8
    #7, #8 -> WithLatestFrom
    -> Subtract
    -> MulticastSubject TimedLED
    -> MulticastSubject EndOpto

    SubscribeSubject CenterPoke
    -> Bonsai.Scripting.Expressions.ExpressionCondition !IsPokingCNP
      Expression: !Value
    -> MemberSelector(Selector=Seconds) => #15
    WorkflowInput Source1
    -> GroupWorkflow PlaySound(Description="Presents the noise stimulus to the animal")
        WorkflowInput Source1
        -> IntProperty(Value=31)
        -> MulticastSubject PlaySound
        -> MulticastSubject SoundIndex
        -> SelectMany PrintRequest
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=PrintNumber))
            -> IntProperty(Value=8)
            -> MulticastSubject PrintNumber => #3
            #0, #3 -> Zip
            -> MemberSelector(Selector=Item1)
            -> Take(Count=1)
            -> WorkflowOutput
        -> WorkflowOutput
    -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp)
    -> MemberSelector(Selector=Seconds) => #19
    #15, #19 -> Zip
    -> Subtract
    -> MulticastSubject TimedRT => #22
    -> Condition "UseRT == 0"
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=ReactionTime.TurnSoundOff)
        -> WorkflowOutput
    -> GroupWorkflow StopSound(Description="Stops the noise stimulus") => #24
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> MulticastSubject PlaySound
        -> WorkflowOutput
    #22 -> Condition "UseRT != 0"
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=ReactionTime.TurnSoundOff)
        -> Equal(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> IntProperty(Value=0) => #26
    #24, #26 -> Merge => #27
    #22 -> Condition "RT >= BaseRT"
        WorkflowInput Source1 => #0
        SubscribeSubject BaseRT => #1
        #0, #1 -> Zip
        -> GreaterThanOrEqual
        -> WorkflowOutput
    -> IntProperty(Value=0) => #29
    #22 -> Condition "RT < BaseRT"
        WorkflowInput Source1 => #0
        SubscribeSubject BaseRT => #1
        #0, #1 -> Zip
        -> LessThan
        -> WorkflowOutput
    -> GroupWorkflow StopSound(Description="Stops the noise stimulus")
        WorkflowInput Source1
        -> IntProperty(Value=31)
        -> MulticastSubject PlaySound
        -> WorkflowOutput
    -> IntProperty(Value=-3) => #32
    #29, #32 -> Merge => #33
    #27, #33 -> Zip
    -> MemberSelector(Selector=Item2) => #35
    GroupWorkflow MaxRT
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=MaxReactionTime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
          Expression: TimeSpan.FromSeconds(it)
        -> WorkflowOutput
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT10S, Period=PT0S)
    -> Condition "UseMaxRT != 0"
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=ReactionTime.UseMaxRt)
        -> WorkflowOutput
    -> GroupWorkflow StopSound(Description="Stops the noise stimulus")
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> MulticastSubject PlaySound
        -> WorkflowOutput
    -> IntProperty(Value=-3) => #41
    #35, #41 -> Merge
    -> Take(Count=1)
    -> WorkflowOutput
-> Bonsai.Scripting.Expressions.ExpressionCondition IsTrue
  Expression: it == 0
-> SelectMany Decision => #16
    WorkflowInput Source1
    -> SelectMany PrintRequest
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=PrintNumber))
        -> IntProperty(Value=9)
        -> MulticastSubject PrintNumber => #3
        #0, #3 -> Zip
        -> MemberSelector(Selector=Item1)
        -> Take(Count=1)
        -> WorkflowOutput

    GroupWorkflow Answer => #2
        SubscribeSubject LeftPoke
        -> Bonsai.Scripting.Expressions.ExpressionCondition IsPokingLeft => #1
          Expression: Value
        -> IntProperty(Value=-1) => #2
        SubscribeSubject RightPoke
        -> Bonsai.Scripting.Expressions.ExpressionCondition IsPokingRight => #4
          Expression: Value
        -> IntProperty(Value=1) => #5
        #2, #5 -> Merge
        -> Take(Count=1)
        -> MulticastSubject ResponsePoke
        -> Condition !UseRT
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=ReactionTime.TurnSoundOff)
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        -> GroupWorkflow StopSound
            WorkflowInput Source1
            -> IntProperty(Value=0)
            -> MulticastSubject PlaySound
            -> WorkflowOutput
        #1 -> MemberSelector(Selector=Seconds) => #11
        #4 -> MemberSelector(Selector=Seconds) => #12
        #11, #12 -> Merge
        -> Take(Count=1)
        -> MulticastSubject LNPStart
        -> WorkflowOutput
    SubscribeSubject CenterPoke
    -> Bonsai.Scripting.Expressions.ExpressionCondition !IsPokingCNP
      Expression: !Value
    -> MemberSelector(Selector=Seconds) => #5
    #2, #5 -> Zip
    -> Subtract
    -> MulticastSubject TimedMT => #8
    -> Condition "TimedMT >= MinMT"
        WorkflowInput Source1 => #0
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=MinMovementTime) => #2
        #0, #2 -> Zip
        -> GreaterThanOrEqual
        -> WorkflowOutput
    -> IntProperty(Value=0)
    -> SelectMany LNPTime => #11
        SubscribeSubject IntendedLNP => #0
        SubscribeSubject Timestamp => #1
        SubscribeSubject LNPStart => #2
        #1, #2 -> Zip
        -> Subtract => #4
        #0, #4 -> Zip
        -> Subtract
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
          Expression: TimeSpan.FromSeconds(Math.Max(it, 0))
        -> InputMapping(Selector=it, DueTime(Selector=it))
        -> SelectMany "Delay (DuckTapeSolution)"
            WorkflowInput Source1 => #0
            ExternalizedMapping(DueTime) => #1
            #0, #1 -> Delay(DueTime=PT0.01S)
            -> Take(Count=1)
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp) => #10
        SubscribeSubject LeftPoke
        -> Condition IsLeft => #12
            SubscribeSubject ResponsePoke
            -> Equal(Operand=IntProperty(Value=-1))
            -> WorkflowOutput
        #10, #12 -> WithLatestFrom => #13
        SubscribeSubject RightPoke
        -> Condition IsRight => #15
            SubscribeSubject ResponsePoke
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        #10, #15 -> WithLatestFrom => #16
        #13, #16 -> Merge => #17
        -> Bonsai.Scripting.Expressions.ExpressionCondition !IsPokingLNP
          Expression: !(Item2.Value)
        -> MemberSelector(Selector=Item2.Seconds) => #19
        #17 -> Bonsai.Scripting.Expressions.ExpressionCondition IsPokingLNP
          Expression: Item2.Value
        -> MemberSelector(Selector=Item1.Seconds) => #21
        #19, #21 -> Merge => #22
        SubscribeSubject LNPStart => #23
        #22, #23 -> Zip
        -> Subtract
        -> MulticastSubject TimedLNP => #26
        SubscribeSubject IntendedLNP => #27
        #26, #27 -> Zip
        -> Take(Count=1)
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionCondition "TimedLNP >= IntendedLNP"
      Expression: Item1 >= Item2
    -> GroupWorkflow EvaluateAnswer => #13
        WorkflowInput Source1 => #0
        SubscribeSubject ResponsePoke => #1
        SubscribeSubject LeftOrRight => #2
        #1, #2 -> CombineLatest => #3
        #0, #3 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #5
        -> Bonsai.Scripting.Expressions.ExpressionCondition AnswerIsRight
          Expression: Item1 == Item2
        -> IntProperty(Value=2) => #7
        #5 -> Bonsai.Scripting.Expressions.ExpressionCondition AnswerIsWrong
          Expression: Item1 != Item2
        -> IntProperty(Value=1) => #9
        #7, #9 -> Merge
        -> MulticastSubject Outcome
        -> SelectMany PrintRequest
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=PrintNumber))
            -> IntProperty(Value=10)
            -> MulticastSubject PrintNumber => #3
            #0, #3 -> Zip
            -> MemberSelector(Selector=Item1)
            -> Take(Count=1)
            -> WorkflowOutput
        -> WorkflowOutput
    #11 -> Bonsai.Scripting.Expressions.ExpressionCondition "TimedLNP < IntendedLNP"
      Expression: Item1 < Item2
    -> IntProperty(Value=-6) => #15
    #8 -> Condition "TimedMT < MinMT"
        WorkflowInput Source1 => #0
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=MinMovementTime) => #2
        #0, #2 -> Zip
        -> LessThan
        -> WorkflowOutput
    -> IntProperty(Value=-5) => #17
    GroupWorkflow MaxMT
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=MaxMt)
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
          Expression: TimeSpan.FromSeconds(it)
        -> WorkflowOutput
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT3M, Period=PT0S)
    -> IntProperty(Value=-4) => #21
    SubscribeSubject LNPStart
    -> Skip(Count=1) => #23
    #21, #23 -> TakeUntil => #24
    #13, #15, #17, #24 -> Merge
    -> Take(Count=1)
    -> WorkflowOutput
-> Bonsai.Scripting.Expressions.ExpressionCondition IsTrue
  Expression: it > 0
-> SelectMany Reward => #18
    WorkflowInput Source1 => #0
    SubscribeSubject Outcome => #1
    #0, #1 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #3
    -> Bonsai.Scripting.Expressions.ExpressionCondition AnswerIsRight
      Expression: it == 2
    -> GroupWorkflow WaterDelivery => #5
        WorkflowInput Source1 => #0
        SubscribeSubject ResponsePoke => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject WaterDelivery
        -> WorkflowOutput
    #3 -> Bonsai.Scripting.Expressions.ExpressionCondition AnswerIsWrong
      Expression: it == 1
    -> SelectMany Penalty(Description=FIXME)
        GroupWorkflow BoxLEDBlink
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=Lights.BoxPeriod)
            -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
              Expression: TimeSpan.FromMilliseconds(it)
            -> PropertyMapping(Period)
            -> Timer(DueTime=PT0S, Period=PT1S)
            -> Condition
                SubscribeSubject LevelConfig
                -> MemberSelector(Selector=Cues.PenaltyLight)
                -> WorkflowOutput
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=Led0))
            -> MulticastSubject BehaviorCommands => #7
            SubscribeSubject SetupConfig => #8
            -> MemberSelector(Selector=Lights.BoxPeriod) => #9
            #8 -> MemberSelector(Selector=Lights.BoxDutyCycle) => #10
            #9, #10 -> Zip
            -> Multiply
            -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
              Expression: TimeSpan.FromMilliseconds(it)
            -> PropertyMapping(DueTime) => #14
            #7, #14 -> Delay(DueTime=PT0.5S)
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=Led0))
            -> MulticastSubject BehaviorCommands
            -> WorkflowOutput

        WorkflowInput Source1
        -> SelectMany PrintRequest
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=PrintNumber))
            -> IntProperty(Value=11)
            -> MulticastSubject PrintNumber => #3
            #0, #3 -> Zip
            -> MemberSelector(Selector=Item1)
            -> Take(Count=1)
            -> WorkflowOutput

        SubscribeSubject Penalty
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT1S, Period=PT0S)
        -> Take(Count=1)
        -> WorkflowOutput
    -> IntProperty(Value=1) => #8
    #5, #8 -> Merge
    -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp)
    -> MemberSelector(Selector=Seconds)
    -> MulticastSubject TrialEnd
    -> MulticastSubject SaveTrial
    -> IntProperty(Value=0)
    -> Take(Count=1)
    -> WorkflowOutput
#16 -> Bonsai.Scripting.Expressions.ExpressionCondition IsFalse => #19
  Expression: it <= 0
#14 -> Bonsai.Scripting.Expressions.ExpressionCondition IsFalse => #20
  Expression: it != 0
#12 -> Bonsai.Scripting.Expressions.ExpressionCondition IsFalse => #21
  Expression: it != 0
#10 -> Bonsai.Scripting.Expressions.ExpressionCondition IsFalse => #22
  Expression: it != 0
#19, #20, #21, #22 -> Merge
-> SelectMany Abort => #24
    GroupWorkflow PokeLEDOff
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=Led1))
        -> MulticastSubject BehaviorCommands
        -> WorkflowOutput

    SubscribeSubject AnimalConfig
    -> MemberSelector(Selector=Optogenetics.Duration)
    -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT1S, Period=PT0S)
    -> MulticastSubject EndOpto

    WorkflowInput Source1
    -> MulticastSubject Outcome
    -> SelectMany PrintRequest
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=PrintNumber))
        -> IntProperty(Value=10)
        -> MulticastSubject PrintNumber => #3
        #0, #3 -> Zip
        -> MemberSelector(Selector=Item1)
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany Penalty
        GroupWorkflow BoxLEDBlink
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=Lights.BoxPeriod)
            -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
              Expression: TimeSpan.FromMilliseconds(it)
            -> PropertyMapping(Period)
            -> Timer(DueTime=PT0S, Period=PT1S)
            -> Condition
                SubscribeSubject LevelConfig
                -> MemberSelector(Selector=Cues.PenaltyLight)
                -> WorkflowOutput
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=Led0))
            -> MulticastSubject BehaviorCommands => #7
            SubscribeSubject SetupConfig => #8
            -> MemberSelector(Selector=Lights.BoxPeriod) => #9
            #8 -> MemberSelector(Selector=Lights.BoxDutyCycle) => #10
            #9, #10 -> Zip
            -> Multiply
            -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
              Expression: TimeSpan.FromMilliseconds(it)
            -> PropertyMapping(DueTime) => #14
            #7, #14 -> Delay(DueTime=PT0.5S)
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=Led0))
            -> MulticastSubject BehaviorCommands
            -> WorkflowOutput

        WorkflowInput Source1
        -> SelectMany PrintRequest
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=PrintNumber))
            -> IntProperty(Value=11)
            -> MulticastSubject PrintNumber => #3
            #0, #3 -> Zip
            -> MemberSelector(Selector=Item1)
            -> Take(Count=1)
            -> WorkflowOutput

        SubscribeSubject Penalty
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT1S, Period=PT0S)
        -> Take(Count=1)
        -> WorkflowOutput
    -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp)
    -> MemberSelector(Selector=Seconds)
    -> MulticastSubject TrialEnd
    -> MulticastSubject SaveTrial
    -> IntProperty(Value=0)
    -> Take(Count=1)
    -> WorkflowOutput
#8 -> Bonsai.Scripting.Expressions.ExpressionCondition IsFalse
  Expression: it != 0
-> Delay(DueTime=PT0.01S) => #26
#18, #24, #26 -> Merge
-> Take(Count=1)
-> Repeat => #29
GroupWorkflow EndSession => #30
    SubscribeSubject AnimalConfig
    -> MemberSelector(Selector=Session.Duration)
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT10M, Period=PT0S)
    -> IntProperty(Value=0) => #4
    Bonsai.Osc.ReceiveMessage(Address=/stop, TypeTag=i, Connection=UdpServer) => #5
    #4, #5 -> Merge
    -> WorkflowOutput
#29, #30 -> TakeUntil
-> WorkflowOutput
